<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:implot="clr-namespace:Bonsai.ImPlot;assembly=Bonsai.ImPlot"
                 xmlns:imviz="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FrameSubject" />
        <Property Name="TimedBias" />
        <Property Name="LeftBiasCorrectionSubject" />
        <Property Name="RightBiasCorrectionSubject" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>BiasVisualizer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="FrameSubject" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Bias</Name>
            </Expression>
            <Expression xsi:type="implot:PlotBuilder">
              <implot:Name>BiasPlot</implot:Name>
              <implot:Visible>true</implot:Visible>
              <implot:Size>
                <implot:X>-1</implot:X>
                <implot:Y>150</implot:Y>
              </implot:Size>
              <implot:Flags>NoTitle</implot:Flags>
              <implot:FlagsX>AutoFit</implot:FlagsX>
              <implot:FlagsY>None</implot:FlagsY>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>BiasPlot</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="imviz:LatestOnNewFrame">
              <Name>BiasPlot</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:PlotStyling">
                <p1:TickPositions>
                  <p1:double>-1</p1:double>
                  <p1:double>1</p1:double>
                </p1:TickPositions>
                <p1:TickLabels>
                  <p1:string>R</p1:string>
                  <p1:string>L</p1:string>
                </p1:TickLabels>
                <p1:ImPlotLocationFlags>East</p1:ImPlotLocationFlags>
                <p1:ImPlotLegendFlags>Outside</p1:ImPlotLegendFlags>
                <p1:YAxisMax>1.1</p1:YAxisMax>
                <p1:YAxisMin>-1.1</p1:YAxisMin>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="LeftBiasCorrectionSubject" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LeftBiasCorrection</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialIndexedBias</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TrialIndex</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (it.Item1 as StageCorrection, it.Item2 as TrialIndex)</scr:Expression>
            </Expression>
            <Expression xsi:type="imviz:RollingBufferBuilder">
              <imviz:Capacity>1000</imviz:Capacity>
              <imviz:IndexSelector>TrialIndex</imviz:IndexSelector>
              <imviz:ValueSelector>StageCorrection</imviz:ValueSelector>
            </Expression>
            <Expression xsi:type="imviz:LatestOnNewFrame">
              <Name>BiasPlot</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ScatterStyling">
                <p1:ImPlotMarker>Up</p1:ImPlotMarker>
                <p1:Size>3</p1:Size>
                <p1:FillColorR>1</p1:FillColorR>
                <p1:FillColorG>0</p1:FillColorG>
                <p1:FillColorB>0</p1:FillColorB>
                <p1:FillColorA>1</p1:FillColorA>
                <p1:OutlineColorR>0</p1:OutlineColorR>
                <p1:OutlineColorG>0</p1:OutlineColorG>
                <p1:OutlineColorB>0</p1:OutlineColorB>
                <p1:OutlineColorA>1</p1:OutlineColorA>
                <p1:OutlineWeight>1</p1:OutlineWeight>
              </Combinator>
            </Expression>
            <Expression xsi:type="imviz:PlotLineSeriesBuilder">
              <imviz:Visible>true</imviz:Visible>
              <imviz:Flags>None</imviz:Flags>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="RightBiasCorrectionSubject" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RightBiasCorrection</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>-0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialIndexedBias</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TrialIndex</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (it.Item1 as StageCorrection, it.Item2 as TrialIndex)</scr:Expression>
            </Expression>
            <Expression xsi:type="imviz:RollingBufferBuilder">
              <imviz:Capacity>1000</imviz:Capacity>
              <imviz:IndexSelector>TrialIndex</imviz:IndexSelector>
              <imviz:ValueSelector>StageCorrection</imviz:ValueSelector>
            </Expression>
            <Expression xsi:type="imviz:LatestOnNewFrame">
              <Name>BiasPlot</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ScatterStyling">
                <p1:ImPlotMarker>Down</p1:ImPlotMarker>
                <p1:Size>3</p1:Size>
                <p1:FillColorR>0</p1:FillColorR>
                <p1:FillColorG>0</p1:FillColorG>
                <p1:FillColorB>1</p1:FillColorB>
                <p1:FillColorA>1</p1:FillColorA>
                <p1:OutlineColorR>0</p1:OutlineColorR>
                <p1:OutlineColorG>0</p1:OutlineColorG>
                <p1:OutlineColorB>1</p1:OutlineColorB>
                <p1:OutlineColorA>1</p1:OutlineColorA>
                <p1:OutlineWeight>1</p1:OutlineWeight>
              </Combinator>
            </Expression>
            <Expression xsi:type="imviz:PlotLineSeriesBuilder">
              <imviz:Visible>true</imviz:Visible>
              <imviz:Flags>None</imviz:Flags>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="TimedBias" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialIndexedBias</Name>
            </Expression>
            <Expression xsi:type="imviz:RollingBufferBuilder">
              <imviz:Capacity>1000</imviz:Capacity>
              <imviz:IndexSelector>TrialIndex</imviz:IndexSelector>
              <imviz:ValueSelector>Bias</imviz:ValueSelector>
            </Expression>
            <Expression xsi:type="imviz:LatestOnNewFrame">
              <Name>BiasPlot</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:LineStyling">
                <p1:ColorR>0</p1:ColorR>
                <p1:ColorG>0</p1:ColorG>
                <p1:ColorB>0</p1:ColorB>
                <p1:ColorA>1</p1:ColorA>
                <p1:LineThickness>2</p1:LineThickness>
              </Combinator>
            </Expression>
            <Expression xsi:type="imviz:PlotLineSeriesBuilder">
              <imviz:Visible>true</imviz:Visible>
              <imviz:Flags>None</imviz:Flags>
            </Expression>
            <Expression xsi:type="imviz:RollingBufferBuilder">
              <imviz:Capacity>1</imviz:Capacity>
              <imviz:IndexSelector>TrialIndex</imviz:IndexSelector>
              <imviz:ValueSelector>Bias</imviz:ValueSelector>
            </Expression>
            <Expression xsi:type="imviz:LatestOnNewFrame">
              <Name>BiasPlot</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ScatterStyling">
                <p1:ImPlotMarker>Circle</p1:ImPlotMarker>
                <p1:Size>5</p1:Size>
                <p1:FillColorR>0</p1:FillColorR>
                <p1:FillColorG>1</p1:FillColorG>
                <p1:FillColorB>0</p1:FillColorB>
                <p1:FillColorA>1</p1:FillColorA>
                <p1:OutlineColorR>0</p1:OutlineColorR>
                <p1:OutlineColorG>0</p1:OutlineColorG>
                <p1:OutlineColorB>0</p1:OutlineColorB>
                <p1:OutlineColorA>1</p1:OutlineColorA>
                <p1:OutlineWeight>1</p1:OutlineWeight>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="implot:PlotScatter">
                <implot:Visible>true</implot:Visible>
                <implot:Flags>None</implot:Flags>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Bias</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="imviz:LatestOnNewFrame">
              <Name>BiasPlot</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0:N2}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TrialIndex</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="X" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="implot:PlotText">
                <implot:Visible>true</implot:Visible>
                <implot:Text>0.70</implot:Text>
                <implot:X>9</implot:X>
                <implot:Y>0.7</implot:Y>
                <implot:PixelOffset>
                  <implot:X>0</implot:X>
                  <implot:Y>-10</implot:Y>
                </implot:PixelOffset>
                <implot:Flags>None</implot:Flags>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (it.Item1 as LeftBias, it.Item2 as TrialIndex)</scr:Expression>
            </Expression>
            <Expression xsi:type="imviz:RollingBufferBuilder">
              <imviz:Capacity>1000</imviz:Capacity>
              <imviz:IndexSelector>TrialIndex</imviz:IndexSelector>
              <imviz:ValueSelector>LeftBias</imviz:ValueSelector>
            </Expression>
            <Expression xsi:type="imviz:LatestOnNewFrame">
              <Name>BiasPlot</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:LineStyling">
                <p1:ColorR>1</p1:ColorR>
                <p1:ColorG>0</p1:ColorG>
                <p1:ColorB>0</p1:ColorB>
                <p1:ColorA>0.7</p1:ColorA>
                <p1:LineThickness>1</p1:LineThickness>
              </Combinator>
            </Expression>
            <Expression xsi:type="imviz:PlotLineSeriesBuilder">
              <imviz:Visible>true</imviz:Visible>
              <imviz:Flags>None</imviz:Flags>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>-0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (it.Item1 as RightBias, it.Item2 as TrialIndex)</scr:Expression>
            </Expression>
            <Expression xsi:type="imviz:RollingBufferBuilder">
              <imviz:Capacity>1000</imviz:Capacity>
              <imviz:IndexSelector>TrialIndex</imviz:IndexSelector>
              <imviz:ValueSelector>RightBias</imviz:ValueSelector>
            </Expression>
            <Expression xsi:type="imviz:LatestOnNewFrame">
              <Name>BiasPlot</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:LineStyling">
                <p1:ColorR>0</p1:ColorR>
                <p1:ColorG>0</p1:ColorG>
                <p1:ColorB>1</p1:ColorB>
                <p1:ColorA>0.7</p1:ColorA>
                <p1:LineThickness>1</p1:LineThickness>
              </Combinator>
            </Expression>
            <Expression xsi:type="imviz:PlotLineSeriesBuilder">
              <imviz:Visible>true</imviz:Visible>
              <imviz:Flags>None</imviz:Flags>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TrialGenerator</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="13" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="25" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="32" To="37" Label="Source1" />
            <Edge From="32" To="41" Label="Source1" />
            <Edge From="32" To="46" Label="Source1" />
            <Edge From="32" To="51" Label="Source1" />
            <Edge From="32" To="58" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="42" To="44" Label="Source1" />
            <Edge From="42" To="49" Label="Source1" />
            <Edge From="43" To="50" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="50" Label="Source2" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="47" To="52" Label="Source2" />
            <Edge From="47" To="59" Label="Source2" />
            <Edge From="48" To="50" Label="Source3" />
            <Edge From="49" To="50" Label="Source4" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="62" To="63" Label="Source1" />
            <Edge From="63" To="64" Label="Source1" />
            <Edge From="65" To="66" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>