<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.LicketySplit;assembly=AllenNeuralDynamics.LicketySplit"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.SniffDetector;assembly=AllenNeuralDynamics.SniffDetector"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.WhiteRabbit;assembly=AllenNeuralDynamics.WhiteRabbit"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.EnvironmentSensor;assembly=AllenNeuralDynamics.EnvironmentSensor"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p6="clr-namespace:AllenNeuralDynamics.HarpUtils;assembly=AllenNeuralDynamics.HarpUtils"
                 xmlns:p7="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SessionName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SessionName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DataDirectory</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RootFolder" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai">
              <RootFolder />
              <SessionName xsi:nil="true" />
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>Behavior</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Modality" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p1:AppendModalitySuffix,sys:Nullable(p1:Modality)">
                    <MemberName>Modality</MemberName>
                    <Value>Behavior</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Modality</Name>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>HarpLogging</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpBehaviorGetMetadata.bonsai" />
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>Behavior</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StepperDriverEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpStepperDriverGetMetadata.bonsai" />
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>StepperDriver</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpLickometerLeftEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>LickometerLeft</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpLickometerLeft</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpLickometerRightEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>LickometerRight</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpLickometerRight</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpSoundCardEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpSoundCardGetMetadata.bonsai" />
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>SoundCard</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpSniffDetectorEvents</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>SniffDetector</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpSniffDetector</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpWhiteRabbitEvents</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p4:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>ClockGenerator</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpEnvironmentSensorEvents</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>EnvironmentSensor</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpEnvironmentSensor</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="5" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="5" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source3" />
                        <Edge From="6" To="11" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="11" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source3" />
                        <Edge From="12" To="17" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="17" Label="Source2" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source3" />
                        <Edge From="17" To="21" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="21" Label="Source2" />
                        <Edge From="22" To="27" Label="Source1" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="27" Label="Source2" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="27" Label="Source3" />
                        <Edge From="27" To="31" Label="Source1" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="31" Label="Source2" />
                        <Edge From="32" To="37" Label="Source1" />
                        <Edge From="33" To="34" Label="Source1" />
                        <Edge From="34" To="37" Label="Source2" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="36" To="37" Label="Source3" />
                        <Edge From="38" To="43" Label="Source1" />
                        <Edge From="39" To="40" Label="Source1" />
                        <Edge From="40" To="43" Label="Source2" />
                        <Edge From="41" To="42" Label="Source1" />
                        <Edge From="42" To="43" Label="Source3" />
                        <Edge From="43" To="47" Label="Source1" />
                        <Edge From="44" To="45" Label="Source1" />
                        <Edge From="45" To="46" Label="Source1" />
                        <Edge From="46" To="47" Label="Source2" />
                        <Edge From="48" To="53" Label="Source1" />
                        <Edge From="49" To="50" Label="Source1" />
                        <Edge From="50" To="53" Label="Source2" />
                        <Edge From="51" To="52" Label="Source1" />
                        <Edge From="52" To="53" Label="Source3" />
                        <Edge From="54" To="59" Label="Source1" />
                        <Edge From="55" To="56" Label="Source1" />
                        <Edge From="56" To="59" Label="Source2" />
                        <Edge From="57" To="58" Label="Source1" />
                        <Edge From="58" To="59" Label="Source3" />
                        <Edge From="59" To="63" Label="Source1" />
                        <Edge From="60" To="61" Label="Source1" />
                        <Edge From="61" To="62" Label="Source1" />
                        <Edge From="62" To="63" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>HarpCommandsLogging</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:FilterMessageType">
                            <harp:FilterType>Include</harp:FilterType>
                            <harp:MessageType>Write</harp:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:ModifyMessage">
                            <p6:Address xsi:nil="true" />
                            <p6:MessageTypeModified xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpBehaviorGetMetadata.bonsai" />
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>HarpCommands/Behavior</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StepperDriverCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:FilterMessageType">
                            <harp:FilterType>Include</harp:FilterType>
                            <harp:MessageType>Write</harp:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:ModifyMessage">
                            <p6:Address xsi:nil="true" />
                            <p6:MessageTypeModified xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpStepperDriverGetMetadata.bonsai" />
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>HarpCommands/StepperDriver</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpLickometerLeftCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:FilterMessageType">
                            <harp:FilterType>Include</harp:FilterType>
                            <harp:MessageType>Write</harp:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:ModifyMessage">
                            <p6:Address xsi:nil="true" />
                            <p6:MessageTypeModified xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>HarpCommands/LickometerLeft</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpLickometerRightCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:FilterMessageType">
                            <harp:FilterType>Include</harp:FilterType>
                            <harp:MessageType>Write</harp:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:ModifyMessage">
                            <p6:Address xsi:nil="true" />
                            <p6:MessageTypeModified xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>HarpCommands/LickometerRight</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpWhiteRabbitCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:FilterMessageType">
                            <harp:FilterType>Include</harp:FilterType>
                            <harp:MessageType>Write</harp:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:ModifyMessage">
                            <p6:Address xsi:nil="true" />
                            <p6:MessageTypeModified xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p4:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>HarpCommands/ClockGenerator</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpSniffDetectorCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:FilterMessageType">
                            <harp:FilterType>Include</harp:FilterType>
                            <harp:MessageType>Write</harp:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:ModifyMessage">
                            <p6:Address xsi:nil="true" />
                            <p6:MessageTypeModified xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>HarpCommands/SniffDetector</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpSniffDetector</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpEnvironmentSensorCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:FilterMessageType">
                            <harp:FilterType>Include</harp:FilterType>
                            <harp:MessageType>Write</harp:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:ModifyMessage">
                            <p6:Address xsi:nil="true" />
                            <p6:MessageTypeModified xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>HarpCommands/EnvironmentSensor</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpEnvironmentSensor</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpSoundCardCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:FilterMessageType">
                            <harp:FilterType>Include</harp:FilterType>
                            <harp:MessageType>Write</harp:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:ModifyMessage">
                            <p6:Address xsi:nil="true" />
                            <p6:MessageTypeModified xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpSoundCardGetMetadata.bonsai" />
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>HarpCommands/SoundCard</DeviceName>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="9" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="9" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source3" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="13" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="19" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="19" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source3" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="23" Label="Source1" />
                        <Edge From="22" To="23" Label="Source2" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="29" Label="Source1" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="29" Label="Source2" />
                        <Edge From="27" To="28" Label="Source1" />
                        <Edge From="28" To="29" Label="Source3" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="31" To="33" Label="Source1" />
                        <Edge From="32" To="33" Label="Source2" />
                        <Edge From="33" To="34" Label="Source1" />
                        <Edge From="34" To="39" Label="Source1" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="36" To="39" Label="Source2" />
                        <Edge From="37" To="38" Label="Source1" />
                        <Edge From="38" To="39" Label="Source3" />
                        <Edge From="40" To="41" Label="Source1" />
                        <Edge From="41" To="43" Label="Source1" />
                        <Edge From="42" To="43" Label="Source2" />
                        <Edge From="43" To="44" Label="Source1" />
                        <Edge From="44" To="49" Label="Source1" />
                        <Edge From="45" To="46" Label="Source1" />
                        <Edge From="46" To="49" Label="Source2" />
                        <Edge From="47" To="48" Label="Source1" />
                        <Edge From="48" To="49" Label="Source3" />
                        <Edge From="50" To="51" Label="Source1" />
                        <Edge From="51" To="53" Label="Source1" />
                        <Edge From="52" To="53" Label="Source2" />
                        <Edge From="53" To="54" Label="Source1" />
                        <Edge From="54" To="59" Label="Source1" />
                        <Edge From="55" To="56" Label="Source1" />
                        <Edge From="56" To="59" Label="Source2" />
                        <Edge From="57" To="58" Label="Source1" />
                        <Edge From="58" To="59" Label="Source3" />
                        <Edge From="59" To="63" Label="Source1" />
                        <Edge From="60" To="61" Label="Source1" />
                        <Edge From="61" To="62" Label="Source1" />
                        <Edge From="62" To="63" Label="Source2" />
                        <Edge From="64" To="65" Label="Source1" />
                        <Edge From="65" To="67" Label="Source1" />
                        <Edge From="66" To="67" Label="Source2" />
                        <Edge From="67" To="68" Label="Source1" />
                        <Edge From="68" To="73" Label="Source1" />
                        <Edge From="69" To="70" Label="Source1" />
                        <Edge From="70" To="73" Label="Source2" />
                        <Edge From="71" To="72" Label="Source1" />
                        <Edge From="72" To="73" Label="Source3" />
                        <Edge From="73" To="77" Label="Source1" />
                        <Edge From="74" To="75" Label="Source1" />
                        <Edge From="75" To="76" Label="Source1" />
                        <Edge From="76" To="77" Label="Source2" />
                        <Edge From="78" To="79" Label="Source1" />
                        <Edge From="79" To="81" Label="Source1" />
                        <Edge From="80" To="81" Label="Source2" />
                        <Edge From="81" To="82" Label="Source1" />
                        <Edge From="82" To="87" Label="Source1" />
                        <Edge From="83" To="84" Label="Source1" />
                        <Edge From="84" To="87" Label="Source2" />
                        <Edge From="85" To="86" Label="Source1" />
                        <Edge From="86" To="87" Label="Source3" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>SoftwareEvents</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SoftwareEvent</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateTimestamped" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:TimestampSoftwareEvent" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai">
                          <LoggerName>SoftwareEvents</LoggerName>
                          <SubjectName>LoggingRootPath</SubjectName>
                          <Modality xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="rx:Defer">
                          <Name>AdditionalSoftwareEvents</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RngSeedValue</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:CreateSoftwareEvent">
                                  <p1:EventName>RngSeed</p1:EventName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>SoftwareEvent</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>EndExperiment</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>ExperimentCompleted</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:CreateSoftwareEvent">
                                  <p1:EventName>EndSession</p1:EventName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>SoftwareEvent</Name>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Annotation">
                          <Name>Wait for logger to initialize</Name>
                          <Text><![CDATA[]]></Text>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:DelaySubscription">
                            <rx:DueTime>PT0.5S</rx:DueTime>
                          </Combinator>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="7" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="11" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>Logs</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Logs</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>DeviceName</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>ConfigSchemaLogging</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>SessionSchema</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p7:SerializeToJson">
                                  <p7:Formatting>None</p7:Formatting>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName />
                                <LogName>session_output</LogName>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TaskLogicSchema</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p7:SerializeToJson">
                                  <p7:Formatting>None</p7:Formatting>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>tasklogic_output</LogName>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RigSchema</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p7:SerializeToJson">
                                  <p7:Formatting>None</p7:Formatting>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>rig_output</LogName>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RawRigSchema</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>rig_input</LogName>
                                <Extension>json</Extension>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RawSessionSchema</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>session_input</LogName>
                                <Extension>json</Extension>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RawTaskLogicSchema</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>tasklogic_input</LogName>
                                <Extension>json</Extension>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="6" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="6" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source3" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="13" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="13" Label="Source2" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source3" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="20" Label="Source1" />
                              <Edge From="16" To="17" Label="Source1" />
                              <Edge From="17" To="20" Label="Source2" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="20" Label="Source3" />
                              <Edge From="21" To="26" Label="Source1" />
                              <Edge From="22" To="23" Label="Source1" />
                              <Edge From="23" To="26" Label="Source2" />
                              <Edge From="24" To="25" Label="Source1" />
                              <Edge From="25" To="26" Label="Source3" />
                              <Edge From="27" To="32" Label="Source1" />
                              <Edge From="28" To="29" Label="Source1" />
                              <Edge From="29" To="32" Label="Source2" />
                              <Edge From="30" To="31" Label="Source1" />
                              <Edge From="31" To="32" Label="Source3" />
                              <Edge From="33" To="38" Label="Source1" />
                              <Edge From="34" To="35" Label="Source1" />
                              <Edge From="35" To="38" Label="Source2" />
                              <Edge From="36" To="37" Label="Source1" />
                              <Edge From="37" To="38" Label="Source3" />
                            </Edges>
                          </Workflow>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>BehaviorVideos</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Modality" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p1:AppendModalitySuffix,sys:Nullable(p1:Modality)">
                    <MemberName>Modality</MemberName>
                    <Value>BehaviorVideos</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Modality</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Cameras</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.VideoWriter</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="p7:MatchVideoWriter">
                    <p7:Type xsi:type="TypeMapping" TypeArguments="p7:VideoWriterFfmpeg" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>FfmpegWriter</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisCameraName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisWriter</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggeredCamerasStream</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisCameraName</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:CombineLatest" />
                              </Expression>
                              <Expression xsi:type="Equal" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCameraName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LogName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisWriter</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ContainerExtension</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="VideoExtension" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisWriter</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="OutputArguments" Selector="OutputArguments" />
                            <Property Name="InputArguments" Selector="InputArguments" />
                            <Property Name="FrameRate" Selector="FrameRate" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogSpinnakerFfmpeg.bonsai">
                          <Modality>BehaviorVideos</Modality>
                          <LogName>FaceCamera</LogName>
                          <VideoExtension>mp4</VideoExtension>
                          <OutputArguments>-vf "scale=out_color_matrix=bt709:out_range=full" -c:v h264_nvenc -pix_fmt nv12 -color_range full -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -maxrate 700M -bufsize 350M</OutputArguments>
                          <InputArguments>-colorspace rgb -color_primaries bt709 -color_trc linear</InputArguments>
                          <Verbosity>Warning</Verbosity>
                          <FrameRate>0</FrameRate>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="22" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="22" Label="Source2" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="22" Label="Source3" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="22" Label="Source4" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source5" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Cameras</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.VideoWriter</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="p7:MatchVideoWriter">
                    <p7:Type xsi:type="TypeMapping" TypeArguments="p7:VideoWriterOpenCv" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>OpenCvWriter</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisCameraName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisWriter</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggeredCamerasStream</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisCameraName</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:CombineLatest" />
                              </Expression>
                              <Expression xsi:type="Equal" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCameraName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LogName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisWriter</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ContainerExtension</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="VideoExtension" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisWriter</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FrameRate" Selector="FrameRate" />
                            <Property Name="FourCC" Selector="FourCC" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogSpinnakerOpenCv.bonsai">
                          <Modality>BehaviorVideos</Modality>
                          <LogName>FaceCamera</LogName>
                          <VideoExtension>mp4</VideoExtension>
                          <FrameRate>30</FrameRate>
                          <FourCC>FMP4</FourCC>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="22" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="22" Label="Source2" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="22" Label="Source3" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="22" Label="Source4" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source5" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="10" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="16" To="20" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="21" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>