<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.LicketySplit;assembly=AllenNeuralDynamics.LicketySplit"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:p3="clr-namespace:Harp.StepperDriver;assembly=Harp.StepperDriver"
                 xmlns:p4="clr-namespace:;assembly=Extensions"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.AindManipulator;assembly=AllenNeuralDynamics.AindManipulator"
                 xmlns:p6="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns:p7="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p8="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Lickometers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:Defer">
              <Name>LicketySplitLeft</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpLickometerLeftEvents</Name>
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:TimestampedLickState" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:LickChannels">
                      <Value>Channel0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpLickometerLeft</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>BehaviorBoardDIPort0</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpBehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                      <Value>DIPort0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpLickometerLeft</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>isnull</scr:Name>
              <scr:Expression>it == null</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>LicketySplitRight</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpLickometerRightEvents</Name>
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:TimestampedLickState" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:LickChannels">
                      <Value>Channel0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpLickometerRight</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>BehaviorBoardDIPort1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpBehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                      <Value>DIPort1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpLickometerRight</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>isnull</scr:Name>
              <scr:Expression>it == null</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>IsRightLickEvent</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="10" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="22" Label="Source1" />
            <Edge From="11" To="15" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="21" Label="Source1" />
            <Edge From="16" To="20" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RewardDelivery</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>GiveRewardRight</rx:Name>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>SetRewardAmount</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SetIsRightRewardAmount</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsLeft</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Calibration.WaterValveLeft</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>RewardToTime</scr:Name>
                    <scr:Expression>((Item1 * 0.001) - Item2.Offset) / Item2.Slope </scr:Expression>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>ToMilliseconds</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SetIsRightValveMs</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SetIsRightRewardAmount</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsRight</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Calibration.WaterValveRight</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>RewardToTime</scr:Name>
                    <scr:Expression>((Item1 * 0.001) - Item2.Offset) / Item2.Slope </scr:Expression>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>ToMilliseconds</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SetIsRightValveMs</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Boolean,sys:Double)">
                    <rx:Name>SetIsRightValveMs</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>gt0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsRight</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:PulseSupplyPort1" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsLeft</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:PulseSupplyPort0" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>SendMessageBlocking</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Message</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorEvents</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:FilterMessageType">
                            <harp:FilterType>Include</harp:FilterType>
                            <harp:MessageType>Write</harp:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Message</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Address</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Address" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="harp:FilterRegister">
                          <harp:FilterType>Include</harp:FilterType>
                          <harp:Register xsi:type="harp:FilterRegisterAddress">
                            <harp:Address xsi:nil="true" />
                          </harp:Register>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0S</rx:DueTime>
                            <rx:Period>PT0.03S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>3</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Message</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpBehaviorCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:First" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="8" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="15" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="12" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source2" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="10" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="17" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="20" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="20" To="22" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="25" To="30" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="34" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GiveRewardRight</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>SupplyPort1</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>SupplyPort0</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ManipulatorTask</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ManipulatorPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>InitialManipulatorPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateSoftwareEvent">
                <p2:EventName>InitialManipulatorPosition</p2:EventName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoftwareEvent</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ExtendedManipulatorPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateSoftwareEvent">
                <p2:EventName>FinalManipulatorPosition</p2:EventName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoftwareEvent</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ManipulatorPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExtendedManipulatorPosition</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>IsRightTriggerQuickRetract</rx:Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>UpdateExtendedPosition</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRetracted</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ManipulatorPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ExtendedManipulatorPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="9" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SetRetractedState</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>IsRetracted</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Description />
              <scr:Expression>it ? 2 : 4</scr:Expression>
            </Expression>
            <Expression xsi:type="p3:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="p3:TriggerQuickMovement" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriverCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>SpoutAvailableState</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SpoutAvailableState</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>UpdateExtendedPosition</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRetracted</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ManipulatorPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ExtendedManipulatorPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="9" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>CalculatePositions</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ExtendedManipulatorPosition</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ManipulatorPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SpoutDistance" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p4:CalculateSpoutPositions">
                      <p4:SpoutDistance>5</p4:SpoutDistance>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>DetermineDirection</scr:Name>
              <scr:Expression>it.Item1 ? it.Item2.Extended : it.Item2.Retracted</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>MoveTo</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Retraction State Logic</Name>
              <Text><![CDATA[IsRetracted is only toggled back to false when the position has reached the full extended state. IsRetracted is set to true as it begins retracting. ]]></Text>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SetRetractedState</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SpoutAvailableState</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>IsRetracted</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ManipulatorPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>(Math.Round(Item1.X, 2)  == Math.Round(Item2.X, 2)) &amp;&amp;
(Math.Round(Item1.Y1, 2) == Math.Round(Item2.Y1, 2)) &amp;&amp;
(Math.Round(Item1.Y2, 2) == Math.Round(Item2.Y2, 2)) &amp;&amp;
(Math.Round(Item1.Z, 2)  == Math.Round(Item2.Z, 2))</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SpoutAvailableState</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="15" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="14" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Double">
              <rx:Name>ManualSpoutDelta</rx:Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\InlineSoftwareEvent.bonsai">
              <EventName>ManualSpoutDelta</EventName>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Double">
              <rx:Name>AutomaticSpoutDelta</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SpoutDelta</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Drop0s</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="NotEqual">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Scan">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Accumulation,Value</Selector>
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BiasOffsetBounds</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Clamp</scr:Name>
                    <scr:Expression>Math.Min(Math.Max(Item1, Item2.Item1), Item2.Item2)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ManipulatorBiasTracker</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SpoutDelta</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ManipulatorPosition</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p5:ManipulatorPosition">
                <p5:X>0</p5:X>
                <p5:Y1>0</p5:Y1>
                <p5:Y2>0</p5:Y2>
                <p5:Z>0</p5:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SingleAxisMoveTo</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ManipulatorBiasTracker</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateSoftwareEvent">
                <p2:EventName>ManipulatorBiasTracker</p2:EventName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoftwareEvent</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="25" To="28" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="32" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="36" Label="Source1" />
            <Edge From="35" To="36" Label="Source2" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="40" Label="Source1" />
            <Edge From="39" To="40" Label="Source2" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="42" To="45" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source2" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ManipulatorInitialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="Annotation">
              <Name>This is a publish subject!</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HomeMotors</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>WaitForHomed</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsHomed</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DelaySubscription">
                      <rx:DueTime>PT0.2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timeout">
                      <rx:DueTime>PT10S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GoToInit</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>GoToInitialPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCamerasReady</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraState</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>CameraState</rx:Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                <beh:StartCameras>CameraOutput1</beh:StartCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
                <beh:StopCameras>CameraOutput1</beh:StopCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartLogging</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraState</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="14" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\SecondaryReinforcerDispatcher.bonsai" />
      <Expression xsi:type="GroupWorkflow">
        <Name>SoundBoard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>PlayGoCue</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PlayGoCue</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpSoundCard.Calibration</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>GoCue</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PlaySoundOrFrequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p6:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p6:CreatePlaySoundOrFrequencyPayload">
                <p6:PlaySoundOrFrequency>4</p6:PlaySoundOrFrequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpSoundCardCommands</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>RigSchema</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>RigSchema</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>RigSchema</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Name>IsSine</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:CreateObservable">
                <Name>UploadTone</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Name>IsWhiteNoise</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:CreateObservable">
                <Name>UploadWhiteNoise</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>IsWaveformUploadDone</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="18" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="18" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source3" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>