<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:System.Reactive.Linq;assembly=System.Reactive.Interfaces"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.Core.Design;assembly=AllenNeuralDynamics.Core.Design"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.VrForaging;assembly=AllenNeuralDynamics.Core.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput" TypeArguments="p1:IGroupedObservable(sys:String,harp:Timestamped(spk:SpinnakerDataFrame))">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>CamerasStream</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CamerasStream</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Key</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:AccumulateToImmutableList" />
      </Expression>
      <Expression xsi:type="gui:ListBoxDataSourceBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:DisplayMember />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>SelectedControllerCamera</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>SelectedControllerCamera</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>GetStream</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Camera</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CamerasStream</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="p3:IplImageSaturationVisualizerBuilder">
        <p3:Minimum>1</p3:Minimum>
        <p3:Maximum>254</p3:Maximum>
        <p3:OverlayAlpha>1</p3:OverlayAlpha>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CamerasStream</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Enabled" />
          <Property Name="Visible" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Name>ControllerVisualization</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>1</gui:ColumnCount>
        <gui:RowCount>2</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles>
          <gui:RowStyle>
            <gui:SizeType>Percent</gui:SizeType>
            <gui:Height>0.1</gui:Height>
          </gui:RowStyle>
          <gui:RowStyle>
            <gui:SizeType>Percent</gui:SizeType>
            <gui:Height>0.9</gui:Height>
          </gui:RowStyle>
        </gui:RowStyles>
        <gui:CellSpans />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="20" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="20" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source3" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>