WorkflowBuilder(Version=2.9.0)
Defer TaskEngine
    BehaviorSubject<AindDynamicForagingDataSchema.Trial> ThisTrial

    IntProperty(Value=0)
    -> MulticastSubject TrialIndex

    SubscribeSubject ThisTrial
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
    -> MulticastSubject GlobalTrial

    Bonsai.Scripting.Python.GetRuntime
    -> Bonsai.Scripting.Python.ObserveOnGIL
    -> Bonsai.Scripting.Python.Get(VariableName=resolve_generator) => #8
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TrialGenerator)
    -> AindDynamicForagingDataSchema.MatchTrialGeneratorSpec
    -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=TrialGeneratorSpec) => #12
    #8, #12 -> Zip
    -> InvokeMethod(MethodName=__call__, AttemptSerialization=true)
    -> Bonsai.Scripting.Python.ObserveOnGIL
    -> Bonsai.Scripting.Python.Set(VariableName=trial_generator)
    -> SelectMany SampleNextTrial => #17
        Bonsai.Scripting.Python.GetRuntime
        -> Bonsai.Scripting.Python.Get(VariableName=trial_generator)
        -> InvokeMethod(MethodName=next, AttemptSerialization=true)
        -> DeserializeFromPyObject(Type=TypeMapping<AindDynamicForagingDataSchema.Trial>)
        -> WorkflowOutput
    SubscribeSubject GlobalAutoWaterState
    -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=SampledGlobalAutoWaterState) => #19
    #17, #19 -> WithLatestFrom
    -> AindDynamicForagingDataSchema.ModifyTrialWithAutoWaterState
    -> Sink ResetGlobalAutoWaterState
        WorkflowInput Source1 => #0
        SubscribeSubject GlobalAutoWaterState => #1
        #0, #1 -> WithLatestFrom
        -> Take(Count=1)
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionSink Reset
          Expression: it.Reset()
        -> MulticastSubject GlobalAutoWaterState
        -> WorkflowOutput
    -> MulticastSubject ThisTrial

    SubscribeSubject ThisTrial
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
    -> Take(Count=1)
    -> SelectMany PreTrial(Description="Configure necessary parameters before trial is run ")
        GroupWorkflow SetRightRewardSize
            BooleanProperty(Value=true) => #0
            SubscribeSubject ThisTrial
            -> MemberSelector(Selector=RewardSize.Right) => #2
            #0, #2 -> Zip
            -> MulticastSubject SetIsRightRewardAmount
            -> WorkflowOutput

        GroupWorkflow SetLeftRewardSize
            BooleanProperty(Value=false) => #0
            SubscribeSubject ThisTrial
            -> MemberSelector(Selector=RewardSize.Left) => #2
            #0, #2 -> Zip
            -> MulticastSubject SetIsRightRewardAmount
            -> WorkflowOutput

        WorkflowInput Source1
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany RunTrial
        Timer(DueTime=PT0S)
        -> SelectMany QuiescentPeriod
            SubscribeSubject ThisTrial
            -> MemberSelector(Selector=QuiescencePeriodDuration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform "it < 0 ? 0 : it"
              Expression: it < 0 ? 0 : it
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT1S)
            -> BooleanProperty(Value=true) => #6
            SubscribeSubject IsRightLickEvent
            -> Unit
            -> PublishSubject lickReset
            -> BooleanProperty(Value=false) => #10
            #6, #10 -> Merge
            -> Take(Count=1) => #12
            SubscribeSubject ThisTrial
            -> MemberSelector(Selector=QuiescencePeriodRefractoryDuration) => #14
            SubscribeSubject RngObject
            -> PropertyMapping(RandomSource) => #16
            #14, #16 -> AllenNeuralDynamics.AindBehaviorServices.Distributions.SampleDistribution
            -> Bonsai.Scripting.Expressions.ExpressionTransform "it < 0 ? 0 : it"
              Expression: it < 0 ? 0 : it
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> Defer "Refractory Period"
                WorkflowInput Source1
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT3S)
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #21
            SubscribeSubject ThisTrial
            -> Take(Count=1)
            -> MemberSelector(Selector=QuiescencePeriodRefractoryDuration)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #25
            #21, #25 -> SubscribeWhen => #26
            #12, #26 -> Concat
            -> Repeat
            -> Condition QuiescentCompleted
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> SelectMany SolveSpoutPosition
                BooleanProperty(Value=true)
                -> MulticastSubject SpoutAvailableState
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput

            Unit
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=QuiscentPeriod)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject lickReset
            -> CreateObservable Retraction&Reset
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject SpoutAvailableState => #2
                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=QuickRetractSettings)
                -> MemberSelector(Selector=TimeToResetDuringQuiescence) => #5
                SubscribeSubject RngObject
                -> PropertyMapping(RandomSource) => #7
                #5, #7 -> AllenNeuralDynamics.AindBehaviorServices.Distributions.SampleDistribution
                -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                -> PropertyMapping(DueTime) => #10
                #2, #10 -> Delay(DueTime=PT0S)
                -> BitwiseNot
                -> MulticastSubject SpoutAvailableState
                -> WorkflowOutput
            -> Switch => #38
            SubscribeSubject ThisTrial
            -> MemberSelector(Selector=QuickRetractSettings)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #41
            #38, #41 -> SubscribeWhen
        -> SelectMany ResponsePeriod => #2
            SubscribeSubject ThisTrial
            -> MemberSelector(Selector=ResponseDeadlineDuration)
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT1S)
            -> CreateNullableBoolean(Value=nil) => #5
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=ThreadPoolScheduler) => #7
            #5, #7 -> WithLatestFrom => #8
            SubscribeSubject IsRightLickEvent => #9
            -> InputMapping(Value(Selector=Value))
            -> CreateNullableBoolean(Value=nil) => #11
            #9 -> MemberSelector(Selector=Seconds) => #12
            #11, #12 -> Zip => #13
            #8, #13 -> Merge
            -> Bonsai.Harp.CreateTimestamped
            -> Sink CreateResponseSoftwaveEvent
                WorkflowInput Source1
                -> MemberSelector(Selector="Seconds,Value") => #1
                ExternalizedMapping(EventName) => #2
                #1, #2 -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Response)
                -> MulticastSubject SoftwareEvent
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput

            BooleanProperty(Value=false)
            -> Take(Count=1)
            -> MulticastSubject PlayGoCue

            Unit
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ResponsePeriod)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject ThisTrial
            -> MemberSelector(Selector=IsAutoRewardRight)
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=HasValue)
                -> WorkflowOutput
            -> MulticastSubject GiveRewardRight
        -> Condition IfFastRetractTrue
            WorkflowInput Source1 => #0
            SubscribeSubject ThisTrial => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MemberSelector(Selector=QuickRetractSettings)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it != null) && (it.EnableOnResponse)
            -> WorkflowOutput
        -> SelectMany FastRetractPeriod => #4
            WorkflowInput Source1
            -> AsyncSubject response

            SubscribeSubject response => #2
            -> MemberSelector(Selector=Value.HasValue)
            -> BitwiseNot => #4
            SubscribeSubject response => #5
            #4, #5 -> Zip
            -> MemberSelector(Selector=Item2) => #7
            #2 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=HasValue)
                -> WorkflowOutput
            -> MemberSelector(Selector=Value.Value)
            -> BitwiseNot
            -> MulticastSubject IsRightTriggerQuickRetract
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=IsRightTriggerQuickRetract)
            -> MulticastSubject SoftwareEvent => #13
            SubscribeSubject response => #14
            #13, #14 -> Zip
            -> MemberSelector(Selector=Item2) => #16
            #7, #16 -> Merge
            -> WorkflowOutput
        #2 -> Condition Else => #5
            WorkflowInput Source1 => #0
            SubscribeSubject ThisTrial => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MemberSelector(Selector=QuickRetractSettings)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it != null) && (it.EnableOnResponse)
            -> BitwiseNot
            -> WorkflowOutput
        #4, #5 -> Merge
        -> SelectMany CalculateReward => #7
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject response

            SubscribeSubject response
            -> MemberSelector(Selector=Value) => #4
            SubscribeSubject ThisTrial => #5
            #4, #5 -> Zip
            -> DetermineReward(MyProperty="") => #7
            SubscribeSubject response => #8
            #7, #8 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Label
              Expression: new(Item1 as IsRewarded, Item2 as Response)
            -> WorkflowOutput
        -> Condition IfSecondaryReinforcer
            WorkflowInput Source1 => #0
            SubscribeSubject ThisTrial => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MemberSelector(Selector=SecondaryReinforcer)
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNotNull
              Expression: it != null
            -> WorkflowOutput
        -> SelectMany SecondaryReinforcer => #9
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=IsRewarded) => #1
            SubscribeSubject ThisTrial
            -> MemberSelector(Selector=SecondaryReinforcer) => #3
            #1, #3 -> Zip
            -> MulticastSubject DeliverSecondaryReinforcer
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=DeliverSecondaryReinforcer)
            -> MulticastSubject SoftwareEvent
            -> Take(Count=1) => #8
            #8, #0 -> Zip
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        #7 -> Condition Else => #10
            WorkflowInput Source1 => #0
            SubscribeSubject ThisTrial => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MemberSelector(Selector=SecondaryReinforcer)
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNull
              Expression: it == null
            -> WorkflowOutput
        #9, #10 -> Merge
        -> SelectMany RewardConsumptionPeriod
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject ResponseOutcome

            SubscribeSubject ResponseOutcome => #3
            SubscribeSubject ThisTrial
            -> MemberSelector(Selector=RewardDelayDuration)
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime) => #7
            #3, #7 -> Delay(DueTime=PT0S) => #8
            Annotation "AutoWater short"(Text="If AutoWater is enabled we skip the reward check altogether since we dont delivered reward twice.") => #9
            #8, #9 -> SelectMany CheckAutoWater
                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=IsAutoRewardRight)
                -> MemberSelector(Selector=HasValue)
                -> WorkflowOutput
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #12
            #8 -> Bonsai.Scripting.Expressions.ExpressionCondition "Not IsRewarded"
              Expression: !IsRewarded
            -> BooleanProperty(Value=false) => #14
            #8 -> Bonsai.Scripting.Expressions.ExpressionCondition IsRewarded
              Expression: it.IsRewarded
            -> MemberSelector(Selector=Response.Value.Value)
            -> MulticastSubject GiveRewardRight
            -> BooleanProperty(Value=true) => #18
            #12, #14, #18 -> Merge
            -> Take(Count=1) => #20
            SubscribeSubject ThisTrial
            -> MemberSelector(Selector=RewardConsumptionDuration)
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime) => #24
            #20, #24 -> Delay(DueTime=PT3S) => #25
            SubscribeSubject ResponseOutcome => #26
            #25, #26 -> Zip
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput

            Unit
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RewardConsumptionPeriod)
            -> MulticastSubject SoftwareEvent
        -> SelectMany ItiPeriod
            WorkflowInput Source1
            -> AsyncSubject responseOutcome

            SubscribeSubject ThisTrial
            -> PropertyMapping(Trial) => #3
            SubscribeSubject responseOutcome
            -> MemberSelector(Selector=Response)
            -> MemberSelector(Selector=Value)
            -> PropertyMapping(IsRightChoice) => #7
            SubscribeSubject responseOutcome
            -> MemberSelector(Selector=IsRewarded)
            -> PropertyMapping(IsRewarded) => #10
            #3, #7, #10 -> AindDynamicForagingDataSchema.TrialOutcome(IsRightChoice=nil, IsRewarded=false)
            -> MulticastSubject GlobalTrialOutcome
            -> AsyncSubject thisTrialOutcome

            SubscribeSubject ThisTrial
            -> Take(Count=1)
            -> MemberSelector(Selector=InterTrialIntervalDuration)
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT8.824S) => #19
            GroupWorkflow SampleNextTrial => #20
                Bonsai.Scripting.Python.GetRuntime
                -> Bonsai.Scripting.Python.Get(VariableName=trial_generator)
                -> Bonsai.Scripting.Python.ObserveOnGIL => #2
                SubscribeSubject thisTrialOutcome
                -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=TrialOutcome) => #4
                #2, #4 -> Zip
                -> Bonsai.Scripting.Python.ObserveOnGIL
                -> InvokeMethod(MethodName=update, AttemptSerialization=true)
                -> SelectMany Metrics
                    Bonsai.Scripting.Python.GetRuntime
                    -> Bonsai.Scripting.Python.Get(VariableName=trial_generator)
                    -> InvokeMethod(MethodName=get_metrics, AttemptSerialization=true)
                    -> DeserializeFromPyObject(Type=TypeMapping<AindDynamicForagingDataSchema.TrialMetrics>)
                    -> MulticastSubject GlobalTrialMetrics
                    -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=TrialMetrics)
                    -> WorkflowOutput
                -> SelectMany SampleNextTrial
                    Bonsai.Scripting.Python.GetRuntime
                    -> Bonsai.Scripting.Python.Get(VariableName=trial_generator)
                    -> InvokeMethod(MethodName=next, AttemptSerialization=true)
                    -> DeserializeFromPyObject(Type=TypeMapping<AindDynamicForagingDataSchema.Trial>)
                    -> WorkflowOutput
                -> WorkflowOutput
            SubscribeSubject GlobalAutoWaterState
            -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=SampledGlobalAutoWaterState) => #22
            #20, #22 -> WithLatestFrom
            -> AindDynamicForagingDataSchema.ModifyTrialWithAutoWaterState
            -> Sink ResetGlobalAutoWaterState
                WorkflowInput Source1 => #0
                SubscribeSubject GlobalAutoWaterState => #1
                #0, #1 -> WithLatestFrom
                -> Take(Count=1)
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Scripting.Expressions.ExpressionSink Reset
                  Expression: it.Reset()
                -> MulticastSubject GlobalAutoWaterState
                -> WorkflowOutput
            -> Sink MoveSpout => #26
                WorkflowInput Source1
                -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
                -> MemberSelector(Selector=LickspoutOffsetDelta)
                -> MulticastSubject AutomaticSpoutDelta
                -> WorkflowOutput
            SubscribeSubject thisTrialOutcome => #27
            #19, #26, #27 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Label
              Expression: new(Item2 as NextTrial, Item3 as ThisTrialOutcome)
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject ThisTrial
            -> Take(Count=1)
            -> MemberSelector(Selector=QuickRetractSettings)
            -> Bonsai.Scripting.Expressions.ExpressionCondition EnableOnResponse?
              Expression: (it != null) && it.EnableOnResponse
            -> BooleanProperty(Value=true)
            -> MulticastSubject SpoutAvailableState

            Unit
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ItiPeriod)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject TrialIndex
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it + 1
            -> MulticastSubject TrialIndex
        -> Take(Count=1)
        -> MemberSelector(Selector=NextTrial)
        -> MulticastSubject ThisTrial
        -> WorkflowOutput
    -> Repeat
    -> WorkflowOutput
-> WorkflowOutput
