<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>ValveGui</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="OpeningTimeMs" />
              <Property Name="Repeats" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>Calibrate</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>IsRightTriggerCalibration</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>IsCalibrationRunning</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRightTriggerCalibration</Name>
                  </Expression>
                  <Expression xsi:type="rx:Prepend">
                    <Operand xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsCalibrationRunning</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item2? (Item1 ? "Calibrating Right valve..." : "Calibrating Left valve..."): "Ready to calibrate..."</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Text" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>CalibrateDialog</gui:Name>
                    <gui:Enabled>false</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Ready to calibrate...</gui:Text>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>Cancel Calibration</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Cancel Calibration</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>CancelCalibration</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>2</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:PropertyGridBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:HelpVisible>false</gui:HelpVisible>
                    <gui:ToolbarVisible>false</gui:ToolbarVisible>
                    <gui:AutoRefresh>false</gui:AutoRefresh>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsCalibrationRunning</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>RunCalibrationLeft</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>◀ Calibrate Left</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>IsRightTriggerCalibration</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsCalibrationRunning</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>RunCalibrationRight</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Calibrate Right ▶</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>IsRightTriggerCalibration</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>CalibrateWidget</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>2</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles>
                      <gui:RowStyle>
                        <gui:SizeType>Percent</gui:SizeType>
                        <gui:Height>0.5</gui:Height>
                      </gui:RowStyle>
                      <gui:RowStyle>
                        <gui:SizeType>Percent</gui:SizeType>
                        <gui:Height>0.5</gui:Height>
                      </gui:RowStyle>
                    </gui:RowStyles>
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRightTriggerCalibration</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="OpeningTimeMs" Category="ValveCalibration" />
                    <Property Name="Repeats" Category="ValveCalibration" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LoopValve</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>isRightValve</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>IsCalibrationRunning</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>isRightValve</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="OpeningTimeMs" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>100</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>double(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SetIsRightRewardAmount</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>isRightValve</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Period" DisplayName="Interval" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0.05S</rx:DueTime>
                            <rx:Period>PT0.25S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>GiveRewardRight</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Count" DisplayName="Repeats" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>200</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CancelCalibration</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:LastOrDefault" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="6" To="10" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="12" To="15" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source2" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="19" Label="Source1" />
                        <Edge From="18" To="19" Label="Source2" />
                        <Edge From="19" To="21" Label="Source1" />
                        <Edge From="20" To="21" Label="Source2" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>IsCalibrationRunning</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ResetRewardVolume</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TaskLogicParameters</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RewardSize</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>ValveVolume</scr:Name>
                          <scr:Expression>it.Item1 ? it.Item2.RightValueVolume : it.Item2.LeftValueVolume</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SetIsRightRewardAmount</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="0" To="5" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="14" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="18" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="34" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="32" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source2" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="36" To="44" Label="Source1" />
                  <Edge From="37" To="39" Label="Source1" />
                  <Edge From="38" To="39" Label="Source2" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="45" Label="Source1" />
                  <Edge From="44" To="45" Label="Source2" />
                  <Edge From="45" To="46" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Calibration</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="rx:Defer">
              <Name>Flush</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsFlushingValveLeft</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>◀ Close Left</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>◀ Flush Left</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Text" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ToggleButtonBuilder">
                    <gui:Name>FlushLeft</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>◀ Flush Left</gui:Text>
                    <gui:Checked>false</gui:Checked>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>IsFlushingValveLeft</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsFlushingValveLeft</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsFlushingValveRight</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="BitwiseAnd" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>◀ Close Both ▶</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>◀ Flush Both ▶</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Text" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ToggleButtonBuilder">
                    <gui:Name>FlushBoth</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>◀ Flush Both ▶</gui:Text>
                    <gui:Checked>false</gui:Checked>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>Both!!!</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>IsFlushingValveLeft</Name>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>IsFlushingValveRight</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsFlushingValveRight</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Close Right ▶</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Flush Right ▶</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Text" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ToggleButtonBuilder">
                    <gui:Name>FlushRight</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Flush Right ▶</gui:Text>
                    <gui:Checked>false</gui:Checked>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>IsFlushingValveRight</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>3</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                    <rx:Name>IsFlushingValveLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>Flush</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="DoubleProperty">
                            <Value>50</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>DefaultVolume</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="IsRight" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DefaultVolume</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SetIsRightRewardAmount</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.02S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>GiveRewardRight</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DefaultVolume</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Calibration.WaterValveLeft</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>RewardToTime</scr:Name>
                          <scr:Expression>((Item1 * 0.001) - Item2.Offset) / Item2.Slope </scr:Expression>
                        </Expression>
                        <Expression xsi:type="Annotation">
                          <Name>ToMilliseconds</Name>
                          <Text><![CDATA[]]></Text>
                        </Expression>
                        <Expression xsi:type="Multiply">
                          <Operand xsi:type="DoubleProperty">
                            <Value>1000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:TimeSpanFromSeconds" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.0061046S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DefaultVolume</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>DivideByEachOpen</scr:Name>
                          <scr:Expression>Math.Ceiling(5000 / it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Count" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:RepeatCount">
                            <rx:Count>100</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:LastOrDefault" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>IsFlushingValveLeft</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="32" Label="Source1" />
                        <Edge From="6" To="8" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="10" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="24" Label="Source1" />
                        <Edge From="15" To="18" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source2" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="21" Label="Source1" />
                        <Edge From="20" To="21" Label="Source2" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source2" />
                        <Edge From="24" To="28" Label="Source1" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="27" Label="Source1" />
                        <Edge From="27" To="28" Label="Source2" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="31" To="32" Label="Source2" />
                        <Edge From="32" To="33" Label="Source1" />
                        <Edge From="33" To="34" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ResetLeftRewardVolume</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TaskLogicParameters</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RewardSize</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>LeftValueVolume</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SetIsRightRewardAmount</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="5" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                    <rx:Name>IsFlushingValveRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>Flush</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="DoubleProperty">
                            <Value>50</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>DefaultVolume</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="IsRight" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DefaultVolume</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SetIsRightRewardAmount</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.02S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>GiveRewardRight</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DefaultVolume</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Calibration.WaterValveRight</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>RewardToTime</scr:Name>
                          <scr:Expression>((Item1 * 0.001) - Item2.Offset) / Item2.Slope </scr:Expression>
                        </Expression>
                        <Expression xsi:type="Annotation">
                          <Name>ToMilliseconds</Name>
                          <Text><![CDATA[]]></Text>
                        </Expression>
                        <Expression xsi:type="Multiply">
                          <Operand xsi:type="DoubleProperty">
                            <Value>1000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:TimeSpanFromSeconds" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.5S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DefaultVolume</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>DivideByEachOpen</scr:Name>
                          <scr:Expression>Math.Ceiling(5000 / it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Count" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:RepeatCount">
                            <rx:Count>137</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:LastOrDefault" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>IsFlushingValveRight</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="32" Label="Source1" />
                        <Edge From="6" To="8" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="10" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="24" Label="Source1" />
                        <Edge From="15" To="18" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source2" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="21" Label="Source1" />
                        <Edge From="20" To="21" Label="Source2" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source2" />
                        <Edge From="24" To="28" Label="Source1" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="27" Label="Source1" />
                        <Edge From="27" To="28" Label="Source2" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="31" To="32" Label="Source2" />
                        <Edge From="32" To="33" Label="Source1" />
                        <Edge From="33" To="34" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ResetRightRewardVolume</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TaskLogicParameters</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RewardSize</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RightValueVolume</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SetIsRightRewardAmount</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="5" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="45" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="20" Label="Source1" />
                  <Edge From="16" To="18" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="20" To="23" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="26" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="45" Label="Source2" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="34" Label="Source1" />
                  <Edge From="33" To="34" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="34" To="37" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="40" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source2" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="44" To="45" Label="Source3" />
                  <Edge From="45" To="46" Label="Source1" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="48" To="49" Label="Source1" />
                  <Edge From="49" To="50" Label="Source1" />
                  <Edge From="51" To="52" Label="Source1" />
                  <Edge From="52" To="53" Label="Source1" />
                  <Edge From="53" To="54" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Flushing</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>ExperimentState</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Enabled" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>ValveCalibration</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>3</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>1.6</gui:Height>
                </gui:RowStyle>
              </gui:RowStyles>
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="12" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source3" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>