WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath(DisplayName=TaskPath), RigPath, SessionPath)
-> IncludeWorkflow
  Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai
  TaskLogicPath=C:\git\Aind.Behavior.DynamicForaging\local\DynamicForaging_AindDynamicForagingTaskLogic.json
  RigPath=c:\git\Aind.Behavior.DynamicForaging\local\AindDynamicForagingRig.json
  SessionPath=c:\git\Aind.Behavior.DynamicForaging\local\Session.json

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindDynamicForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindDynamicForagingDataSchema.Session>)
    -> Take(Count=1)
    -> AsyncSubject SessionSchema

    SubscribeSubject RawRigSchema
    -> AindDynamicForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindDynamicForagingDataSchema.AindDynamicForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindDynamicForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindDynamicForagingDataSchema.AindDynamicForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

GroupWorkflow Init
    Bonsai.Scripting.Python.CreateRuntime(PythonHome=../.venv, ScriptPath=./Extensions\bonsai.py)

    BooleanProperty(Value=false)
    -> Take(Count=1)
    -> BehaviorSubject IsWaveformUploadDone

    CreateAutoWaterState(Value=nil)
    -> Take(Count=1)
    -> BehaviorSubject GlobalAutoWaterState

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<AindDynamicForagingDataSchema.TrialOutcome> GlobalTrialOutcome
    BehaviorSubject<AindDynamicForagingDataSchema.Trial> GlobalTrial
    BehaviorSubject<AindDynamicForagingDataSchema.TrialMetrics> GlobalTrialMetrics

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed)
    -> AsyncSubject RngSeedValue

    BooleanProperty(Value=false)
    -> Take(Count=1) => #21
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #24
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #27
    #21, #24, #27 -> Merge
    -> BehaviorSubject ExperimentState

    DoubleProperty(Value=-5) => #30
    DoubleProperty(Value=5) => #31
    #30, #31 -> Zip
    -> Take(Count=1)
    -> AsyncSubject BiasOffsetBounds

GroupWorkflow StartupLogic
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    Disable SubscribeSubject IsWaveformUploadDone
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Disable Timeout(DueTime=PT10S)
    -> Disable Take(Count=1) => #4
    #0, #4 -> Disable Zip
    -> Take(Count=1)
    -> Unit
    -> MulticastSubject StartLogging
    -> Delay(DueTime=PT2S)
    -> MulticastSubject StartExperiment

Annotation(Text="")
-> IncludeWorkflow(Path=Extensions\Hardware.bonsai)

IncludeWorkflow(Path=Extensions\OperationControl.bonsai)

IncludeWorkflow(Path=Extensions\TaskEngine.bonsai)
-> Bonsai.Scripting.Expressions.ExpressionCondition isNull
  Expression: it == null
-> Take(Count=1)
-> Unit
-> Delay(DueTime=PT0.5S)
-> MulticastSubject EndExperiment => #13
SubscribeSubject StartExperiment => #14
#13, #14 -> SubscribeWhen

IncludeWorkflow(Path=Extensions\Logging.bonsai) => #16
SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S) => #18
#16, #18 -> TakeUntil => #19
SubscribeSubject StartLogging => #20
#19, #20 -> SubscribeWhen

SubscribeSubject EndExperiment
-> Take(Count=1)
-> Delay(DueTime=PT2S)
-> WorkflowOutput

GroupWorkflow Visualizers
    Disable IntProperty(Value=0)
    -> Disable Visualizer
        GroupWorkflow TrialPlots
            SubscribeSubject GlobalTrialOutcome
            -> TrialOutcomeVisualizerBuilder(FontSize=16)
            -> VisualizerMapping => #2
            SubscribeSubject SoftwareEvent => #3
            SubscribeSubject IsRightLickEvent
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickRight) => #6
            SubscribeSubject IsRightLickEvent
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> BitwiseNot
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickLeft) => #9
            SubscribeSubject GiveRewardRight
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaterRight) => #12
            SubscribeSubject GiveRewardRight
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaterLeft) => #16
            #3, #6, #9, #12, #16 -> Merge
            -> SoftwareEventVisualizerBuilder
              FontSize=16
              TimeWindow=20
              ShadedAreaPlotters
                ShadedAreaPlotter(EventName=QuiscentPeriod, Color=Gold, Alpha=0.3)
                ShadedAreaPlotter(EventName=ResponsePeriod, Color=SandyBrown, Alpha=0.3)
                ShadedAreaPlotter(EventName=RewardConsumptionPeriod, Color=RosyBrown, Alpha=0.3)
                ShadedAreaPlotter(EventName=ItiPeriod, Color=Green, Alpha=0.3)
              PointPlotters
                PointPlotter(EventName=LickLeft, Color=Red, YPosition=0.9, MarkerSize=6, Marker=Down)
                PointPlotter(EventName=LickRight, Color=Blue, YPosition=0.1, MarkerSize=6, Marker=Up)
                PointPlotter(EventName=IsRightTriggerQuickRetract, Color=DarkCyan, YPosition=0.5, MarkerSize=6, Marker=Plus)
                PointPlotter(EventName=DeliverSecondaryReinforcer, Color=Sienna, YPosition=0.5, MarkerSize=6, Marker=Plus)
                PointPlotter(EventName=WaterRight, Color=Blue, YPosition=0.2, MarkerSize=6, Marker=Circle)
                PointPlotter(EventName=WaterLeft, Color=Red, YPosition=0.8, MarkerSize=6, Marker=Circle)
              TrialBreakEventName=""
              MaxTrials=5
            -> VisualizerMapping => #19
            #2, #19 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput
        -> VisualizerMapping => #1
        GroupWorkflow ManualOverrides
            Defer OffsetControl
                DoubleProperty(Value=0.05)
                -> Take(Count=1)
                -> BehaviorSubject BumpSize

                SubscribeSubject ManipulatorBiasTracker
                -> Format(Format={0:F2})
                -> PropertyMapping(Text)
                -> Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20.25pt", Text=0.00)
                -> VisualizerMapping => #7
                Bonsai.Gui.ButtonBuilder Left(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.75pt", Text=◀️)
                -> Sink BumpLeft
                    WorkflowInput Source1 => #0
                    SubscribeSubject BumpSize => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> Multiply(Operand=DoubleProperty(Value=-1))
                    -> MulticastSubject ManualSpoutDelta
                    -> WorkflowOutput
                -> VisualizerMapping => #10
                Bonsai.Gui.ButtonBuilder Right(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.75pt", Text=▶)
                -> Sink BumpRight
                    WorkflowInput Source1 => #0
                    SubscribeSubject BumpSize => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject ManualSpoutDelta
                    -> WorkflowOutput
                -> VisualizerMapping => #13
                #10, #13 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
                -> VisualizerMapping => #15
                SubscribeSubject ExperimentState
                -> PropertyMapping(Enabled) => #17
                #7, #15, #17 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=false, Visible=true, Font="Microsoft Sans Serif, 22.125pt", ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
                -> WorkflowOutput
            -> VisualizerMapping
            -> Bonsai.Gui.GroupBoxBuilder "Spout offset"(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.75pt", Text="Spout offset")
            -> VisualizerMapping => #3
            Defer GiveWaterUI
                Bonsai.Gui.ButtonBuilder Left(Enabled=true, Visible=true, Text=💧◀)
                -> Sink TriggerLeft
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject GiveManualWaterRight
                    -> WorkflowOutput
                -> VisualizerMapping => #2
                Bonsai.Gui.ButtonBuilder Right(Enabled=true, Visible=true, Text=💧▶)
                -> Sink TriggerRight
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject GiveManualWaterRight
                    -> WorkflowOutput
                -> VisualizerMapping => #5
                #2, #5 -> Bonsai.Gui.TableLayoutPanelBuilder ManualWater
                  Enabled=true
                  Visible=true
                  ColumnCount=2
                  RowCount=1
                  ColumnStyles(ColumnStyle(SizeType=Percent, Width=0.5), ColumnStyle(SizeType=Percent, Width=0.5))
                  RowStyles=""
                  CellSpans=""
                -> WorkflowOutput

                BehaviorSubject<System.Boolean> GiveManualWaterRight
                -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=GiveManualWaterRight)
                -> MulticastSubject GiveRewardRight
            -> VisualizerMapping
            -> Bonsai.Gui.GroupBoxBuilder 💧(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text="")
            -> VisualizerMapping => #7
            Defer ForceAutoWater
                SubscribeSubject GlobalAutoWaterState
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: !it.IsLeft
                -> PropertyMapping(Enabled)
                -> Bonsai.Gui.ButtonBuilder SetLeft(Enabled=true, Visible=true, Text=🎣◀)
                -> Sink UpdateGlobalState
                    WorkflowInput Source1 => #0
                    SubscribeSubject GlobalAutoWaterState => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #3
                    ExternalizedMapping(Expression) => #4
                    #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it.SetLeft()
                    -> MulticastSubject GlobalAutoWaterState
                    -> WorkflowOutput
                -> VisualizerMapping => #5
                SubscribeSubject GlobalAutoWaterState
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: !it.IsRight
                -> PropertyMapping(Enabled)
                -> Bonsai.Gui.ButtonBuilder SetRight(Enabled=true, Visible=true, Text=🎣▶)
                -> Sink UpdateGlobalState
                    WorkflowInput Source1 => #0
                    SubscribeSubject GlobalAutoWaterState => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #3
                    ExternalizedMapping(Expression) => #4
                    #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it.SetRight()
                    -> MulticastSubject GlobalAutoWaterState
                    -> WorkflowOutput
                -> VisualizerMapping => #11
                SubscribeSubject GlobalAutoWaterState
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.HasValue
                -> PropertyMapping(Enabled)
                -> Bonsai.Gui.ButtonBuilder Reset(Enabled=false, Visible=true, Text=❎)
                -> Sink UpdateGlobalState
                    WorkflowInput Source1 => #0
                    SubscribeSubject GlobalAutoWaterState => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #3
                    ExternalizedMapping(Expression) => #4
                    #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it.Reset()
                    -> MulticastSubject GlobalAutoWaterState
                    -> WorkflowOutput
                -> VisualizerMapping => #17
                #5, #11, #17 -> Bonsai.Gui.TableLayoutPanelBuilder ForceAutoWater(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
                -> WorkflowOutput
            -> VisualizerMapping
            -> Bonsai.Gui.GroupBoxBuilder 🎣(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text="")
            -> VisualizerMapping => #11
            #7, #11 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.75pt")
            -> VisualizerMapping => #13
            #3, #13 -> Bonsai.Gui.TableLayoutPanelBuilder "Manual Control"(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 36pt", ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput
        -> VisualizerMapping => #3
        Defer LauncherControl
            AllenNeuralDynamics.Core.Design.AnnotationSource
            -> VisualizerMapping => #1
            SubscribeSubject ExperimentState
            -> BitwiseNot
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text="Start Experiment")
            -> PublishSubject StartExperimentToggleButton
            -> VisualizerMapping => #7
            Bonsai.Gui.ButtonBuilder End(Enabled=true, Visible=true, Text="End Experiment")
            -> PublishSubject EndExperimentButton
            -> VisualizerMapping => #10
            #1, #7, #10 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl
              Enabled=true
              Visible=true
              Font="Microsoft Sans Serif, 26pt"
              ColumnCount=2
              RowCount=4
              ColumnStyles=""
              RowStyles=""
              CellSpans(CellSpan(ColumnSpan=2, RowSpan=3), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
            -> WorkflowOutput

            SubscribeSubject StartExperimentToggleButton
            -> Take(Count=1)
            -> Unit
            -> MulticastSubject StartExperimentShortcut

            SubscribeSubject EndExperimentButton
            -> Take(Count=1)
            -> Unit
            -> MulticastSubject EndExperiment => #20
            SubscribeSubject StartExperiment => #21
            #20, #21 -> SubscribeWhen
        -> VisualizerMapping => #5
        IncludeWorkflow(Path=Extensions\ValveUi.bonsai)
        -> VisualizerMapping => #7
        #5, #7 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
        -> VisualizerMapping => #9
        #3, #9 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #11
        #1, #11 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans(CellSpan(ColumnSpan=2, RowSpan=1)))
        -> VisualizerMapping => #13
        SubscribeSubject TriggeredCamerasStream
        -> IncludeWorkflow(Path=Extensions\SpinnakerCameraControllerSaturationVisualizer.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #16
        IncludeWorkflow(Path=Extensions\AindManipulatorGui.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #18
        #16, #18 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #20
        #13, #20 -> Bonsai.Gui.TableLayoutPanelBuilder
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles(ColumnStyle(SizeType=Percent, Width=0.75), ColumnStyle(SizeType=Percent, Width=0.25))
          RowStyles=""
          CellSpans=""
        -> VisualizerMapping => #22
        SubscribeSubject GlobalTrial
        -> TrialTableVisualizerBuilder(History=2, FontSize=16)
        -> VisualizerMapping => #25
        #22, #25 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
        -> WorkflowOutput
    -> Disable Bonsai.Design.VisualizerWindow(Text=DynamicForaging, Visible=true, Location=nil, Size=nil, WindowState=Maximized)

    GroupWorkflow ImGuiContext
        Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
        -> PublishSubject Frame
        -> WorkflowOutput

    GroupWorkflow DataTransformations
        SubscribeSubject GlobalTrialOutcome
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> BehaviorSubject TimedTrial

        SubscribeSubject GlobalTrialMetrics
        -> MemberSelector(Selector=Bias)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new (it as Bias)
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> BehaviorSubject TimedBias

        SubscribeSubject IsRightLickEvent
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> PublishSubject LickRight

        SubscribeSubject IsRightLickEvent
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> BitwiseNot
            -> WorkflowOutput
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> PublishSubject LickLeft

        SubscribeSubject SoftwareEvent => #16
        SubscribeSubject IsRightLickEvent
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickRight) => #19
        SubscribeSubject IsRightLickEvent
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> BitwiseNot
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickLeft) => #22
        SubscribeSubject GiveRewardRight
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaterRight) => #25
        SubscribeSubject GiveRewardRight
        -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaterLeft) => #29
        #16, #19, #22, #25, #29 -> Merge
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
        -> Timestamp
        -> AllenNeuralDynamics.Core.Design.AccumulateToImmutableList
        -> BehaviorSubject EthogramEvents

    GroupWorkflow OutputControl
        GroupWorkflow Manipulator
            PublishSubject<System.Reactive.Unit> UiManipulatorLeft
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=-1, Y1=0, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorRight
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=1, Y1=0, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorForwardLeft
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=1, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorForwardRight
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=1, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorBackLeft
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=-1, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorBackRight
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=-1, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorUp
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=1) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorDown
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=-1) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorHome
            -> Sink Home
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject HomeMotors
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorStop
            -> Sink StopMotors
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject StopMotors
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorInitialize
            -> Sink GoToInitialPosition
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject GoToInitialPosition
                -> WorkflowOutput

            BehaviorSubject<System.Single> OffsetGain

        PublishSubject<System.Single> UiHabituationTimeUpdate

        DoubleProperty(Value=0.05)
        -> Take(Count=1)
        -> BehaviorSubject BumpSize

        PublishSubject<System.Reactive.Unit> UiMoveLeft
        -> Sink BumpLeft
            WorkflowInput Source1 => #0
            SubscribeSubject BumpSize => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Multiply(Operand=DoubleProperty(Value=-1))
            -> MulticastSubject ManualSpoutDelta
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiMoveRight
        -> Sink BumpRight
            WorkflowInput Source1 => #0
            SubscribeSubject BumpSize => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject ManualSpoutDelta
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiGiveRight
        -> Sink TriggerRight
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> MulticastSubject GiveManualWaterRight
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiGiveLeft
        -> Sink TriggerLeft
            WorkflowInput Source1
            -> BooleanProperty(Value=false)
            -> MulticastSubject GiveManualWaterRight
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiCueGiveLeft
        -> Sink UpdateGlobalState
            WorkflowInput Source1 => #0
            SubscribeSubject GlobalAutoWaterState => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Expression) => #4
            #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.SetLeft()
            -> MulticastSubject GlobalAutoWaterState
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiCueGiveRight
        -> Sink UpdateGlobalState
            WorkflowInput Source1 => #0
            SubscribeSubject GlobalAutoWaterState => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Expression) => #4
            #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.SetRight()
            -> MulticastSubject GlobalAutoWaterState
            -> WorkflowOutput

        BooleanProperty(Value=true)
        -> MulticastSubject IsFlushingValveLeft

        BehaviorSubject<System.Boolean> GiveManualWaterRight
        -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=GiveManualWaterRight)
        -> MulticastSubject GiveRewardRight

        BehaviorSubject<System.Boolean> IsFlushingValveLeft
        BehaviorSubject<System.Boolean> IsFlushingValveRight

        PublishSubject<System.Boolean> UiKeepLeftOpen => #24
        PublishSubject<System.Boolean> UiKeepBothOpen => #25
        #24, #25 -> Merge
        -> CreateObservable KeepOpen
            WorkflowInput Source1
            -> BitwiseNot
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            Timer(DueTime=PT0.1S) => #3
            ExternalizedMapping(Value(DisplayName=IsRight)) => #4
            #3, #4 -> BooleanProperty(Value=false) => #5
            DoubleProperty(Value=500) => #6
            #5, #6 -> WithLatestFrom
            -> MulticastSubject SetIsRightValveMs
            -> Delay(DueTime=PT0.02S)
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject GiveRewardRight
            -> Delay(DueTime=PT0.5S)
            -> Repeat
            -> BooleanProperty(Value=false) => #14
            #2, #14 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch
        PublishSubject<System.Boolean> UiKeepRightOpen => #29
        #29, #25 -> Merge
        -> CreateObservable KeepOpen
            WorkflowInput Source1
            -> BitwiseNot
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            Timer(DueTime=PT0.1S) => #3
            ExternalizedMapping(Value(DisplayName=IsRight)) => #4
            #3, #4 -> BooleanProperty(Value=true) => #5
            DoubleProperty(Value=500) => #6
            #5, #6 -> WithLatestFrom
            -> MulticastSubject SetIsRightValveMs
            -> Delay(DueTime=PT0.02S)
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject GiveRewardRight
            -> Delay(DueTime=PT0.5S)
            -> Repeat
            -> BooleanProperty(Value=false) => #14
            #2, #14 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

        PublishSubject<System.Boolean> UiDrainLeft => #33
        PublishSubject<System.Boolean> UiDrainBoth => #34
        #33, #34 -> Merge
        -> CreateObservable Flush
            WorkflowInput Source1
            -> BitwiseNot
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            Timer(DueTime=PT0.1S) => #3
            ExternalizedMapping(Value(DisplayName=IsRight)) => #4
            #3, #4 -> BooleanProperty(Value=false) => #5
            DoubleProperty(Value=500) => #6
            #5, #6 -> WithLatestFrom
            -> MulticastSubject SetIsRightValveMs
            -> Delay(DueTime=PT0.02S)
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject GiveRewardRight
            -> Delay(DueTime=PT0.5S) => #12
            FloatProperty(Value=5000) => #13
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Calibration.WaterValveLeft) => #15
            #13, #15 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #17
              Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
            Annotation ToMilliseconds(Text="") => #18
            #17, #18 -> Multiply(Operand=DoubleProperty(Value=1000))
            -> Bonsai.Scripting.Expressions.ExpressionTransform DivideByEachOpen
              Expression: Math.Ceiling(it / 500)
            -> PropertyMapping(Count) => #21
            #12, #21 -> RepeatCount(Count=300)
            -> LastOrDefault
            -> BooleanProperty(Value=false)
            -> MulticastSubject IsFlushingValveLeft => #25
            #2, #25 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch
        -> PublishSubject DrainLeftComplete
        PublishSubject<System.Boolean> UiDrainRight => #39
        #39, #34 -> Merge
        -> CreateObservable Flush
            WorkflowInput Source1
            -> BitwiseNot
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            Timer(DueTime=PT0.1S) => #3
            ExternalizedMapping(Value(DisplayName=IsRight)) => #4
            #3, #4 -> BooleanProperty(Value=true) => #5
            DoubleProperty(Value=500) => #6
            #5, #6 -> WithLatestFrom
            -> MulticastSubject SetIsRightValveMs
            -> Delay(DueTime=PT0.02S)
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject GiveRewardRight
            -> Delay(DueTime=PT0.5S) => #12
            FloatProperty(Value=5000) => #13
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Calibration.WaterValveRight) => #15
            #13, #15 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #17
              Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
            Annotation ToMilliseconds(Text="") => #18
            #17, #18 -> Multiply(Operand=DoubleProperty(Value=1000))
            -> Bonsai.Scripting.Expressions.ExpressionTransform DivideByEachOpen
              Expression: Math.Ceiling(it / 500)
            -> PropertyMapping(Count) => #21
            #12, #21 -> RepeatCount(Count=300)
            -> LastOrDefault
            -> BooleanProperty(Value=false)
            -> MulticastSubject IsFlushingValveRight => #25
            #2, #25 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch
        -> PublishSubject DrainRightComplete

    GroupWorkflow VisualizerStructure
        ExternalizedMapping(Name(DisplayName=FrameSubject))
        -> SubscribeSubject Frame => #1
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> TableBuilder => #3
          Visible=true
          Columns(ColumnStyling(Name=Ethograph, Flags=WidthStretch, InitValue=0), ColumnStyling(Name=Camera, Flags=WidthFixed, InitValue=320))
          Flags="BordersInnerH BordersOuterH BordersInnerV BordersOuterV BordersH BordersV BordersInner BordersOuter Borders SizingFixedFit"
          OuterSize(X=0, Y=0)
          InnerWidth=0
          ShowHeadersRow=true
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #5
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Behavior => #7
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Bias => #9
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Ethogram => #11
        #7, #9, #11 -> CombineLatest => #12
        #3 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Camera => #14
        #12, #14 -> CombineLatest
        #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=Borders, OuterSize(X=0, Y=0), InnerWidth=0)
        -> PublishSubject Metadata => #18
        #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TabBarBuilder(Visible=true, Flags=None) => #20
        -> Bonsai.ImGui.TabItemBuilder PreSession(Visible=true, Text=pre-session, Flags=None)
        -> PublishSubject PreSession => #22
        #20 -> Bonsai.ImGui.TabItemBuilder IntraSession(Visible=true, Text=intra-session, Flags=None)
        -> PublishSubject IntraSession => #24
        #18, #22, #24 -> CombineLatest

    IncludeWorkflow
      Path=Extensions\BehaviorVisualizer.bonsai
      PlotName=Behavior1
      LickLeftSubject=LickLeft
      LickRightSubject=LickRight
      TrialSubject=TimedTrial
      FrameSubject=Behavior

    IncludeWorkflow(Path=Extensions\BiasVisualizer.bonsai, FrameSubject=Bias, TimedBias=TimedBias)

    Annotation PLACEHOLDER(Text="Placheolder for session information dictionary")
    -> GroupWorkflow SessionInfo
        SubscribeSubject TimedTrial
        -> MemberSelector(Selector=Value.Trial.Metadata.Extra) => #1
        -> StringProperty(Value=Placeholder) => #2
        #1 -> StringProperty(Value=Placeholder) => #3
        #2, #3 -> Zip
        -> SelectMany AsDictionary
            WorkflowInput Source1
            -> Take(Count=1)
            -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
            -> Take(Count=1)
            -> WorkflowOutput
        -> BehaviorSubject SessionMetadata
        -> WorkflowOutput

    SubscribeSubject Ethogram => #11
    SubscribeSubject EthogramEvents
    -> PropertyMapping(SoftwareEvents) => #13
    #11, #13 -> SoftwareEventVisualizer
      Visible=true
      SoftwareEvents=""
      TrialBreakEventName=Break
      PlotHeight=200
      ShadedAreaPlotters
        ShadedAreaPlotter(EventName=QuiescentPeriod, Color=Gold, Alpha=0.3)
        ShadedAreaPlotter(EventName=ResponsePeriod, Color=SandyBrown, Alpha=0.3)
        ShadedAreaPlotter(EventName=RewardConsumptionPeriod, Color=RosyBrown, Alpha=0.3)
        ShadedAreaPlotter(EventName=ItiPeriod, Color=Green, Alpha=0.3)
      PointPlotters
        PointPlotter(EventName=LickLeft, Color=Red, YPosition=0.9, MarkerSize=6, Marker=Down)
        PointPlotter(EventName=LickRight, Color=Blue, YPosition=0.1, MarkerSize=6, Marker=Up)
        PointPlotter(EventName=IsRightTriggerQuickRetract, Color=DarkCyan, YPosition=0.5, MarkerSize=6, Marker=Plus)
        PointPlotter(EventName=DeliverSecondaryReinforcer, Color=Sienna, YPosition=0.5, MarkerSize=6, Marker=Plus)
        PointPlotter(EventName=WaterRight, Color=Red, YPosition=0.2, MarkerSize=6, Marker=Circle)
        PointPlotter(EventName=WaterLeft, Color=Blue, YPosition=0.8, MarkerSize=6, Marker=Circle)

    Unit => #15
    -> IncludeWorkflow
      Path=Extensions\CameraPreviewVisualizer.bonsai
      FrameSubject=Camera
      CameraName=Camera1
      MinSaturation=53
      MaxSaturation=215
      FlipState=2
      Rotation=0
      TriggeredCamerasStream=TriggeredCamerasStream
    #15 -> IncludeWorkflow
      Path=Extensions\CameraPreviewVisualizer.bonsai
      FrameSubject=Camera
      CameraName=Camera2
      MinSaturation=53
      MaxSaturation=215
      FlipState=2
      Rotation=0
      TriggeredCamerasStream=TriggeredCamerasStream

    SubscribeSubject SessionSchema
    -> IncludeWorkflow
      Path=Extensions\MetadataVisualizer.bonsai
      FrameSubject=Metadata
      StartExperimentSubject=StartExperimentShortcut
      EndExperimentSubject=EndExperiment
      UiHabituationTimeUpdate=UiHabituationTimeUpdate

    GroupWorkflow PreSessionVisualizer
        ExternalizedMapping
          FrameSubject
          UiKeepLeftOpne
          UiKeepRightOpen
          UiKeepBothOpen
          UiDrainLeft
          UiDrainRight
          UiDrainBoth
          UiManipulatorLeft
          UiManipulatorForwardLeft
          UiManipulatorForwardRight
          UiManipulatorUp
          UiManipulatorRight
          UiManipulatorBackLeft
          UiManipulatorBackRight
          UiManipulatorDown
          UiManipulatorStop
          UiManipulatorHome
          UiControlManipulator
        -> Defer PreSessionVisualizer
            BehaviorSubject<System.Boolean> LeftOpenState
            BehaviorSubject<System.Boolean> RightOpenState
            BehaviorSubject<System.Boolean> BothOpenState

            ExternalizedMapping(Name(DisplayName=FrameSubject))
            -> SubscribeSubject PreSession
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=Borders, OuterSize(X=0, Y=0), InnerWidth=0) => #5
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #7
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #8
            SubscribeSubject BothOpenState
            -> BitwiseNot => #10
            -> PropertyMapping(Enabled) => #11
            #8, #11 -> ToggleButtonBuilder KeepLeftOpen(Visible=true, Text=KeepLeftOpen, Toggled=false, ToggledOffText="Open Left", ToggledOnText="Close Left", Enabled=true)
            -> MulticastSubject LeftOpenState => #13
            ExternalizedMapping(Name(DisplayName=UiKeepLeftOpne, Category=UiControlValve)) => #14
            #13, #14 -> MulticastSubject UiKeepLeftOpen => #15
            #10 -> PropertyMapping(Enabled) => #16
            #8, #16 -> ToggleButtonBuilder KeepRightOpen(Visible=true, Text=KeepRightOpen, Toggled=false, ToggledOffText="Open Right", ToggledOnText="Close Right", Enabled=true)
            -> MulticastSubject RightOpenState => #18
            ExternalizedMapping(Name(DisplayName=UiKeepRightOpen, Category=UiControlValve)) => #19
            #18, #19 -> MulticastSubject UiKeepRightOpen => #20
            SubscribeSubject LeftOpenState => #21
            SubscribeSubject RightOpenState => #22
            #21, #22 -> CombineLatest
            -> BitwiseOr
            -> BitwiseNot
            -> PropertyMapping(Enabled) => #26
            #8, #26 -> ToggleButtonBuilder KeepBothOpen(Visible=true, Text=KeepBothOpen, Toggled=false, ToggledOffText="Open Both", ToggledOnText="Close Both", Enabled=true)
            -> MulticastSubject BothOpenState => #28
            ExternalizedMapping(Name(DisplayName=UiKeepBothOpen, Category=UiControlValve)) => #29
            #28, #29 -> MulticastSubject UiKeepBothOpen => #30
            #15, #20, #30 -> CombineLatest => #31
            #7 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #32
            SubscribeSubject DrainLeftComplete
            -> PropertyMapping(Toggled) => #34
            #32, #34 -> ToggleButtonBuilder DrainLeft(Visible=true, Text="Drain Left", Toggled=false, ToggledOffText="Drain Left", ToggledOnText="Cancel Drain Left", Enabled=true) => #35
            ExternalizedMapping(Name(DisplayName=UiDrainLeft, Category=UiControlValve)) => #36
            #35, #36 -> MulticastSubject UiDrainLeft => #37
            SubscribeSubject DrainRightComplete
            -> PropertyMapping(Toggled) => #39
            #32, #39 -> ToggleButtonBuilder DrainRight(Visible=true, Text="Drain Right", Toggled=false, ToggledOffText="Drain Right", ToggledOnText="Cancel Drain Right", Enabled=true) => #40
            ExternalizedMapping(Name(DisplayName=UiDrainRight, Category=UiControlValve)) => #41
            #40, #41 -> MulticastSubject UiDrainRight => #42
            SubscribeSubject DrainLeftComplete => #43
            SubscribeSubject DrainRightComplete => #44
            #43, #44 -> Merge
            -> PropertyMapping(Toggled) => #46
            #32, #46 -> ToggleButtonBuilder DrainBoth(Visible=true, Text="Drain Both", Toggled=false, ToggledOffText="Drain Both", ToggledOnText="Cancel Drain Both", Enabled=true) => #47
            ExternalizedMapping(Name(DisplayName=UiDrainBoth, Category=UiControlValve)) => #48
            #47, #48 -> MulticastSubject UiDrainBoth => #49
            #37, #42, #49 -> CombineLatest => #50
            #31, #50 -> CombineLatest
            #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=Borders, OuterSize(X=0, Y=0), InnerWidth=0) => #53
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #55
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #57
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #58
            -> Bonsai.ImGui.ButtonBuilder MoveLeft(Visible=true, Text="Move Left")
            -> Unit => #60
            ExternalizedMapping(Name(DisplayName=UiManipulatorLeft, Category=UiControlManipulator)) => #61
            #60, #61 -> MulticastSubject UiManipulatorLeft => #62
            #58 -> Bonsai.ImGui.ButtonBuilder ForwardLeft(Visible=true, Text="Forward Left")
            -> Unit => #64
            ExternalizedMapping(Name(DisplayName=UiManipulatorForwardLeft, Category=UiControlManipulator)) => #65
            #64, #65 -> MulticastSubject UiManipulatorForwardLeft => #66
            #58 -> Bonsai.ImGui.ButtonBuilder ForwardRight(Visible=true, Text="Forward Right")
            -> Unit => #68
            ExternalizedMapping(Name(DisplayName=UiManipulatorForwardRight, Category=UiControlManipulator)) => #69
            #68, #69 -> MulticastSubject UiManipulatorForwardRight => #70
            #58 -> Bonsai.ImGui.ButtonBuilder Up(Visible=true, Text=Up)
            -> Unit => #72
            ExternalizedMapping(Name(DisplayName=UiManipulatorUp, Category=UiControlManipulator)) => #73
            #72, #73 -> MulticastSubject UiManipulatorUp => #74
            #62, #66, #70, #74 -> CombineLatest => #75
            #57 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #76
            -> Bonsai.ImGui.ButtonBuilder MoveRight(Visible=true, Text="Move Right")
            -> Unit => #78
            ExternalizedMapping(Name(DisplayName=UiManipulatorRight, Category=UiControlManipulator)) => #79
            #78, #79 -> MulticastSubject UiManipulatorRight => #80
            #76 -> Bonsai.ImGui.ButtonBuilder BackLeft(Visible=true, Text="Back Left")
            -> Unit => #82
            ExternalizedMapping(Name(DisplayName=UiManipulatorBackLeft, Category=UiControlManipulator)) => #83
            #82, #83 -> MulticastSubject UiManipulatorBackLeft => #84
            #76 -> Bonsai.ImGui.ButtonBuilder BackRight(Visible=true, Text="Back Right")
            -> Unit => #86
            ExternalizedMapping(Name(DisplayName=UiManipulatorBackRight, Category=UiControlManipulator)) => #87
            #86, #87 -> MulticastSubject UiManipulatorBackRight => #88
            #76 -> Bonsai.ImGui.ButtonBuilder Down(Visible=true, Text=Down)
            -> Unit => #90
            ExternalizedMapping(Name(DisplayName=UiManipulatorDown, Category=UiControlManipulator)) => #91
            #90, #91 -> MulticastSubject UiManipulatorDown => #92
            #80, #84, #88, #92 -> CombineLatest => #93
            #75, #93 -> CombineLatest => #94
            #55 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #95
            -> Bonsai.ImGui.ButtonBuilder STOP(Visible=true, Text=STOP)
            -> Unit => #97
            ExternalizedMapping(Name(DisplayName=UiManipulatorStop, Category=UiControlManipulator)) => #98
            #97, #98 -> MulticastSubject UiManipulatorStop => #99
            #95 -> Bonsai.ImGui.ButtonBuilder Home(Visible=true, Text=Home)
            -> Unit => #101
            ExternalizedMapping(Name(DisplayName=UiManipulatorHome, Category=UiControlManipulator)) => #102
            #101, #102 -> MulticastSubject UiManipulatorHome => #103
            #95 -> Bonsai.ImGui.ButtonBuilder Initialize(Visible=true, Text=Initialize)
            -> Unit => #105
            ExternalizedMapping(Name(DisplayName=UiControlManipulator, Category=UiManipulatorInitialize)) => #106
            #105, #106 -> MulticastSubject UiManipulatorInitialize => #107
            #99, #103, #107 -> CombineLatest => #108
            #94, #108 -> CombineLatest
            #53 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #111
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TextBuilder(Visible=true, Text="x: ") => #113
            #111 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #114
            ExternalizedMapping(Name)
            -> SubscribeSubject ManipulatorPosition => #116
            -> MemberSelector(Selector=X)
            -> Format(Format={0:N2}, Selector=it)
            -> PropertyMapping(Text) => #119
            #114, #119 -> Bonsai.ImGui.TextBuilder(Visible=true, Text=0.00) => #120
            #113, #120 -> CombineLatest
            #111 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TextBuilder(Visible=true, Text="y1: ") => #123
            #111 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #124
            #116 -> MemberSelector(Selector=Y1)
            -> Format(Format={0:N2}, Selector=it)
            -> PropertyMapping(Text) => #127
            #124, #127 -> Bonsai.ImGui.TextBuilder(Visible=true, Text=0.00) => #128
            #123, #128 -> CombineLatest
            #111 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TextBuilder(Visible=true, Text="y2: ") => #131
            #111 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #132
            #116 -> MemberSelector(Selector=Y2)
            -> Format(Format={0:N2}, Selector=it)
            -> PropertyMapping(Text) => #135
            #132, #135 -> Bonsai.ImGui.TextBuilder(Visible=true, Text=0.00) => #136
            #131, #136 -> CombineLatest
            #111 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TextBuilder(Visible=true, Text="z: ") => #139
            #111 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #140
            #116 -> MemberSelector(Selector=Z)
            -> Format(Format={0:N2}, Selector=it)
            -> PropertyMapping(Text) => #143
            #140, #143 -> Bonsai.ImGui.TextBuilder(Visible=true, Text=0.00) => #144
            #139, #144 -> CombineLatest
            #111 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TextBuilder(Visible=true, Text="step: ") => #147
            #111 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.InputFloatBuilder(Visible=true, Flags=None, InitialValue=0, Step=0, StepFast=0)
            -> MulticastSubject OffsetGain => #150
            #147, #150 -> CombineLatest
        -> WorkflowOutput

    IncludeWorkflow
      Path=Extensions\IntraSessionVisualizer.bonsai
      FrameSubject=IntraSession
      UiGiveLeft=UiGiveLeft
      UiGiveRight=UiGiveRight
      UiMoveLeft=UiMoveLeft
      UiMoveRight=UiMoveRight
      SessionMetadataSubject=SessionMetadata
      StartExperimentSubject=StartExperiment
      UiCueGiveLeft=UiCueGiveLeft
      UiCueGiveRight=UiCueGiveRight
