<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:p3="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.Core.Design;assembly=AllenNeuralDynamics.Core.Design"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p6="clr-namespace:;assembly=Extensions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:imvizui="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers.Design"
                 xmlns:imgui="clr-namespace:Bonsai.ImGui;assembly=Bonsai.ImGui"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p7="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>TrialData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>A</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LickLeft</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>0</p1:Lower>
                      <p1:Upper>3</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:TimeSpanFromSeconds" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0.553S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:CreateSoftwareEvent">
                      <p2:EventName>ResponsePeriod</p2:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoftwareEvent</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>0</p1:Lower>
                      <p1:Upper>3</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:TimeSpanFromSeconds" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT2.008S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:CreateSoftwareEvent">
                      <p2:EventName>RewardPeriod</p2:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoftwareEvent</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:TrialOutcome">
                <p3:IsRightChoice xsi:nil="true" />
                <p3:IsRewarded>false</p3:IsRewarded>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateSoftwareEvent">
                <p2:EventName>TrialOutcome</p2:EventName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoftwareEvent</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>0</p1:Lower>
                      <p1:Upper>3</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:TimeSpanFromSeconds" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT2.284S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:CreateSoftwareEvent">
                      <p2:EventName>ITI</p2:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoftwareEvent</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateSoftwareEvent">
                <p2:EventName>Break</p2:EventName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoftwareEvent</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:TimestampSoftwareEvent" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p5:AccumulateToImmutableList" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SoftwareEventHistory</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Expo</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Experimenter" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:Session">
                <p3:AindBehaviorServicesPkgVersion>0.13.5</p3:AindBehaviorServicesPkgVersion>
                <p3:Version>0.13.5</p3:Version>
                <p3:Experiment>Task6</p3:Experiment>
                <p3:Date>0001-01-01T00:00:00.0000000+00:00</p3:Date>
                <p3:SessionName>Stage1</p3:SessionName>
                <p3:Subject>Plimbo</p3:Subject>
                <p3:AllowDirtyRepo>false</p3:AllowDirtyRepo>
                <p3:SkipHardwareValidation>false</p3:SkipHardwareValidation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>M</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Expo</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Experimenter" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:Session">
                <p3:AindBehaviorServicesPkgVersion>0.13.5</p3:AindBehaviorServicesPkgVersion>
                <p3:Version>0.13.5</p3:Version>
                <p3:Experiment>Task7</p3:Experiment>
                <p3:Date>0001-01-01T00:00:00.0000000+00:00</p3:Date>
                <p3:SessionName>Stage2</p3:SessionName>
                <p3:Subject>Plimbo</p3:Subject>
                <p3:AllowDirtyRepo>false</p3:AllowDirtyRepo>
                <p3:SkipHardwareValidation>false</p3:SkipHardwareValidation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SessionInfo</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimedTrial</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BiasRandom</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &gt; 1 ? 1 : it</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &lt; -1 ? -1 : it</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (it as Bias)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TimedBias</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>S</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LickRight</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0.1</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>-0.1</p1:Lower>
                <p1:Upper>0.1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BiasRandom</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.01S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.01</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>500</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>1</dsp:Max>
                <dsp:RangeMin>0</dsp:RangeMin>
                <dsp:RangeMax>0.05</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="DoubleProperty">
                <Value>3.14</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Sin" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>(it +1) * 0.5</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p6:CreateNullableBoolean">
                <p6:Value>false</p6:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.9</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p6:CreateNullableBoolean">
                <p6:Value xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item3 ?  Item2 : Item1</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>500</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>1</dsp:Max>
                <dsp:RangeMin>0</dsp:RangeMin>
                <dsp:RangeMax>0.05</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Sin" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>(it +1) * 0.5</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="IsRightChoice" Selector="Item3" />
                <Property Name="IsRewarded" Selector="Item5" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="PRewardLeft" Selector="Item2" />
                <Property Name="PRewardRight" Selector="Item4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p6:CreateNullableBoolean">
                <p6:Value>false</p6:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p6:CreateNullableBoolean">
                <p6:Value xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.05</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item3 ? Item1 : Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="IsAutoResponseRight" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:Trial">
                <p3:PRewardLeft>0.59164587077011477</p3:PRewardLeft>
                <p3:PRewardRight>0.40913708100521279</p3:PRewardRight>
                <p3:RewardConsumptionDuration>5</p3:RewardConsumptionDuration>
                <p3:RewardDelayDuration>0</p3:RewardDelayDuration>
                <p3:ResponseDeadlineDuration>5</p3:ResponseDeadlineDuration>
                <p3:QuiescencePeriodDuration>0.5</p3:QuiescencePeriodDuration>
                <p3:InterTrialIntervalDuration>5</p3:InterTrialIntervalDuration>
                <p3:IsAutoResponseRight xsi:nil="true" />
                <p3:LickspoutOffsetDelta>0</p3:LickspoutOffsetDelta>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Trial" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:TrialOutcome">
                <p3:IsRightChoice>false</p3:IsRightChoice>
                <p3:IsRewarded>true</p3:IsRewarded>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>SampleTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Random</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.289S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimedTrial</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="38" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source2" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="40" To="42" Label="Source1" />
            <Edge From="40" To="49" Label="Source1" />
            <Edge From="41" To="42" Label="Source2" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="50" Label="Source1" />
            <Edge From="49" To="50" Label="Source2" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="63" To="64" Label="Source1" />
            <Edge From="64" To="65" Label="Source1" />
            <Edge From="65" To="66" Label="Source1" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="94" Label="Source1" />
            <Edge From="70" To="71" Label="Source1" />
            <Edge From="71" To="72" Label="Source1" />
            <Edge From="72" To="73" Label="Source1" />
            <Edge From="73" To="74" Label="Source1" />
            <Edge From="74" To="94" Label="Source2" />
            <Edge From="75" To="76" Label="Source1" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="77" To="78" Label="Source1" />
            <Edge From="78" To="79" Label="Source1" />
            <Edge From="79" To="80" Label="Source1" />
            <Edge From="80" To="85" Label="Source1" />
            <Edge From="81" To="82" Label="Source1" />
            <Edge From="82" To="83" Label="Source1" />
            <Edge From="83" To="84" Label="Source1" />
            <Edge From="83" To="85" Label="Source3" />
            <Edge From="84" To="85" Label="Source2" />
            <Edge From="85" To="86" Label="Source1" />
            <Edge From="86" To="94" Label="Source3" />
            <Edge From="87" To="88" Label="Source1" />
            <Edge From="88" To="89" Label="Source1" />
            <Edge From="89" To="90" Label="Source1" />
            <Edge From="90" To="94" Label="Source4" />
            <Edge From="91" To="92" Label="Source1" />
            <Edge From="92" To="93" Label="Source1" />
            <Edge From="93" To="94" Label="Source5" />
            <Edge From="94" To="95" Label="Source1" />
            <Edge From="94" To="96" Label="Source1" />
            <Edge From="94" To="108" Label="Source1" />
            <Edge From="95" To="113" Label="Source1" />
            <Edge From="96" To="111" Label="Source1" />
            <Edge From="97" To="98" Label="Source1" />
            <Edge From="98" To="99" Label="Source1" />
            <Edge From="99" To="100" Label="Source1" />
            <Edge From="100" To="101" Label="Source1" />
            <Edge From="101" To="102" Label="Source1" />
            <Edge From="101" To="106" Label="Source2" />
            <Edge From="102" To="106" Label="Source1" />
            <Edge From="103" To="104" Label="Source1" />
            <Edge From="104" To="105" Label="Source1" />
            <Edge From="105" To="106" Label="Source3" />
            <Edge From="106" To="107" Label="Source1" />
            <Edge From="107" To="108" Label="Source2" />
            <Edge From="108" To="109" Label="Source1" />
            <Edge From="109" To="110" Label="Source1" />
            <Edge From="110" To="111" Label="Source2" />
            <Edge From="111" To="112" Label="Source1" />
            <Edge From="112" To="113" Label="Source2" />
            <Edge From="113" To="114" Label="Source1" />
            <Edge From="114" To="115" Label="Source1" />
            <Edge From="115" To="117" Label="Source1" />
            <Edge From="116" To="117" Label="Source2" />
            <Edge From="117" To="118" Label="Source1" />
            <Edge From="118" To="119" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CameraCapture">
                <cv:Index>0</cv:Index>
                <cv:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CameraFeed</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="rx:CreateObservable">
              <Name>Camera1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFeed</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TimeBase</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Camera1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>Camera2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFeed</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TimeBase</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Camera2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TriggeredCamerasStream</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="imvizui:ImPlotVisualizerBuilder" />
      <Expression xsi:type="imgui:TableBuilder">
        <imgui:Visible>true</imgui:Visible>
        <imgui:Columns>1</imgui:Columns>
        <imgui:Flags>None</imgui:Flags>
        <imgui:OuterSize>
          <imgui:X>0</imgui:X>
          <imgui:Y>0</imgui:Y>
        </imgui:OuterSize>
        <imgui:InnerWidth>0</imgui:InnerWidth>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Frame</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VisualizerStructure</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="FrameSubject" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Frame</Name>
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="imgui:TableBuilder">
              <imgui:Visible>true</imgui:Visible>
              <imgui:Columns>2</imgui:Columns>
              <imgui:Flags>Borders</imgui:Flags>
              <imgui:OuterSize>
                <imgui:X>0</imgui:X>
                <imgui:Y>0</imgui:Y>
              </imgui:OuterSize>
              <imgui:InnerWidth>0</imgui:InnerWidth>
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="imgui:TableBuilder">
              <imgui:Visible>true</imgui:Visible>
              <imgui:Columns>1</imgui:Columns>
              <imgui:Flags>None</imgui:Flags>
              <imgui:OuterSize>
                <imgui:X>0</imgui:X>
                <imgui:Y>0</imgui:Y>
              </imgui:OuterSize>
              <imgui:InnerWidth>0</imgui:InnerWidth>
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Behavior</Name>
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Bias</Name>
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Ethogram</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Camera</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="imgui:TableBuilder">
              <imgui:Visible>true</imgui:Visible>
              <imgui:Columns>1</imgui:Columns>
              <imgui:Flags>Borders</imgui:Flags>
              <imgui:OuterSize>
                <imgui:X>0</imgui:X>
                <imgui:Y>0</imgui:Y>
              </imgui:OuterSize>
              <imgui:InnerWidth>0</imgui:InnerWidth>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Metadata</Name>
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="imgui:TabBarBuilder">
              <imgui:Visible>true</imgui:Visible>
              <imgui:Flags>None</imgui:Flags>
            </Expression>
            <Expression xsi:type="imgui:TabItemBuilder">
              <imgui:Name>PreSession</imgui:Name>
              <imgui:Visible>true</imgui:Visible>
              <imgui:Text>pre-session</imgui:Text>
              <imgui:Flags>None</imgui:Flags>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PreSession</Name>
            </Expression>
            <Expression xsi:type="imgui:TabItemBuilder">
              <imgui:Name>InterSession</imgui:Name>
              <imgui:Visible>true</imgui:Visible>
              <imgui:Text>inter-session</imgui:Text>
              <imgui:Flags>None</imgui:Flags>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>InterSession</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="16" Label="Source1" />
            <Edge From="1" To="19" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="13" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source3" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="25" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="25" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source3" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\BehaviorVisualizer.bonsai">
          <PlotName>Behavior1</PlotName>
          <LickLeftSubject>LickLeft</LickLeftSubject>
          <LickRightSubject>LickRight</LickRightSubject>
          <TrialSubject>TimedTrial</TrialSubject>
          <FrameSubject>Behavior</FrameSubject>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\BiasVisualizer.bonsai">
          <FrameSubject>Bias</FrameSubject>
          <TimedBias>TimedBias</TimedBias>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>OutputControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Single">
              <rx:Name>UiHabituationTimeUpdate</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiMoveLeft</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiGiveRight</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiGiveLeft</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiMoveRight</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiKeepLeftOpen</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiKeepRightOpen</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiKeepBothOpen</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiDrainLeft</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiDrainRight</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiDrainBoth</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiManipulatorLeft</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiManipulatorForwardLeft</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiManipulatorForwardRight</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiManipulatorUp</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiManipulatorRight</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiManipulatorBackRight</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiManipulatorBackLeft</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiManipulatorDown</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiManipulatorStop</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiManipulatorHome</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiManipulatorInitialize</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p7:Unit">
              <rx:Name>StartExperimentShortcut</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p7:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiCueGiveRight</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p7:Unit">
              <rx:Name>UiCueGiveLeft</rx:Name>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Ethogram</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SoftwareEventHistory</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SoftwareEvents" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p6:SoftwareEventVisualizer">
          <p6:Visible>true</p6:Visible>
          <p6:SoftwareEvents>
            <p6:TimestampedOfSoftwareEvent />
            <p6:TimestampedOfSoftwareEvent />
            <p6:TimestampedOfSoftwareEvent />
            <p6:TimestampedOfSoftwareEvent />
            <p6:TimestampedOfSoftwareEvent />
            <p6:TimestampedOfSoftwareEvent />
            <p6:TimestampedOfSoftwareEvent />
            <p6:TimestampedOfSoftwareEvent />
            <p6:TimestampedOfSoftwareEvent />
            <p6:TimestampedOfSoftwareEvent />
            <p6:TimestampedOfSoftwareEvent />
            <p6:TimestampedOfSoftwareEvent />
          </p6:SoftwareEvents>
          <p6:TrialBreakEventName>Break</p6:TrialBreakEventName>
          <p6:PlotHeight>200</p6:PlotHeight>
          <p6:ShadedAreaPlotters>
            <p6:ShadedAreaPlotter>
              <p6:EventName>TrialOutcome</p6:EventName>
              <p6:Color>CornflowerBlue</p6:Color>
              <p6:Alpha>0.3</p6:Alpha>
            </p6:ShadedAreaPlotter>
            <p6:ShadedAreaPlotter>
              <p6:EventName>RewardPeriod</p6:EventName>
              <p6:Color>Crimson</p6:Color>
              <p6:Alpha>0.3</p6:Alpha>
            </p6:ShadedAreaPlotter>
            <p6:ShadedAreaPlotter>
              <p6:EventName>ITI</p6:EventName>
              <p6:Color>Cyan</p6:Color>
              <p6:Alpha>0.3</p6:Alpha>
            </p6:ShadedAreaPlotter>
          </p6:ShadedAreaPlotters>
          <p6:PointPlotters>
            <p6:PointPlotter>
              <p6:EventName>TrialOutcome</p6:EventName>
              <p6:Color>SaddleBrown</p6:Color>
              <p6:YPosition>0.5</p6:YPosition>
              <p6:MarkerSize>2</p6:MarkerSize>
              <p6:Marker>Circle</p6:Marker>
            </p6:PointPlotter>
            <p6:PointPlotter>
              <p6:EventName>LickLeft</p6:EventName>
              <p6:Color>Red</p6:Color>
              <p6:YPosition>0.8</p6:YPosition>
              <p6:MarkerSize>2</p6:MarkerSize>
              <p6:Marker>Down</p6:Marker>
            </p6:PointPlotter>
            <p6:PointPlotter>
              <p6:EventName>LickRight</p6:EventName>
              <p6:Color>DodgerBlue</p6:Color>
              <p6:YPosition>0.2</p6:YPosition>
              <p6:MarkerSize>2</p6:MarkerSize>
              <p6:Marker>Up</p6:Marker>
            </p6:PointPlotter>
          </p6:PointPlotters>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>TriggeredCamerasStream</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\CameraPreviewVisualizer.bonsai">
          <FrameSubject>Camera</FrameSubject>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\CameraPreviewVisualizer.bonsai">
          <FrameSubject>Camera</FrameSubject>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>SessionInfo</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\MetadataVisualizer.bonsai">
          <FrameSubject>Metadata</FrameSubject>
          <StartExperimentSubject>StartExperimentShortcut</StartExperimentSubject>
          <EndExperimentSubject>EndExperiment</EndExperimentSubject>
          <UiHabituationTimeUpdate>UiHabituationTimeUpdate</UiHabituationTimeUpdate>
        </Builder>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\PreSessionVisualizer.bonsai">
        <FrameSubject>PreSession</FrameSubject>
        <UiKeepLeftOpne>UiKeepLeftOpen</UiKeepLeftOpne>
        <UiKeepRightOpen>UiKeepRightOpen</UiKeepRightOpen>
        <UiKeepBothOpen>UiKeepBothOpen</UiKeepBothOpen>
        <UiDrainLeft>UiDrainLeft</UiDrainLeft>
        <UiDrainRight>UiDrainRight</UiDrainRight>
        <UiDrainBoth>UiDrainBoth</UiDrainBoth>
        <UiManipulatorLeft>UiManipulatorLeft</UiManipulatorLeft>
        <UiManipulatorForwardLeft>UiManipulatorForwardLeft</UiManipulatorForwardLeft>
        <UiManipulatorForwardRight>UiManipulatorForwardRight</UiManipulatorForwardRight>
        <UiManipulatorUp>UiManipulatorUp</UiManipulatorUp>
        <UiManipulatorRight>UiManipulatorRight</UiManipulatorRight>
        <UiManipulatorBackLeft>UiManipulatorBackLeft</UiManipulatorBackLeft>
        <UiManipulatorBackRight>UiManipulatorBackRight</UiManipulatorBackRight>
        <UiManipulatorDown>UiManipulatorDown</UiManipulatorDown>
        <UiManipulatorStop>UiManipulatorStop</UiManipulatorStop>
        <UiManipulatorHome>UiManipulatorHome</UiManipulatorHome>
        <UiControlManipulator>UiManipulatorInitialize</UiControlManipulator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InterSessionVisualizer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FrameSubject" />
              <Property Name="UiGiveLeft" />
              <Property Name="UiGiveRight" />
              <Property Name="UiMoveLeft" />
              <Property Name="UiMoveRight" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>InterSessionVisualizer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="FrameSubject" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>InterSession</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>3</imgui:Columns>
                    <imgui:Flags>Borders</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TabBarBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Flags>None</imgui:Flags>
                  </Expression>
                  <Expression xsi:type="imgui:TabItemBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>Manual</imgui:Text>
                    <imgui:Flags>None</imgui:Flags>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>2</imgui:Columns>
                    <imgui:Flags>None</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:ButtonBuilder">
                    <imgui:Name>GiveLeft</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>Give Left</imgui:Text>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="UiGiveLeft" Category="UiControl" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UiGiveLeft</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:ButtonBuilder">
                    <imgui:Name>GiveRight</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>Give Right</imgui:Text>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="UiGiveRight" Category="UiControl" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UiGiveRight</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TabItemBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>Go Cue</imgui:Text>
                    <imgui:Flags>None</imgui:Flags>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>2</imgui:Columns>
                    <imgui:Flags>None</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:ButtonBuilder">
                    <imgui:Name>GiveLeftCue</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>Give Left Cue</imgui:Text>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="UiCueGiveLeft" Category="UiControl" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UiCueGiveLeft</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:ButtonBuilder">
                    <imgui:Name>GiveRightCue</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>Give Right Cue</imgui:Text>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="UiCueGiveRight" Category="UiControl" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UiCueGiveRight</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>2</imgui:Columns>
                    <imgui:Flags>None</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:ButtonBuilder">
                    <imgui:Name>MoveLeft</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>Move Left</imgui:Text>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="UiMoveLeft" Category="UiControl" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UiMoveLeft</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:ButtonBuilder">
                    <imgui:Name>MoveRight</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>Move Right</imgui:Text>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="UiMoveRight" Category="UiControl" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UiMoveRight</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TextBuilder">
                    <imgui:Name>SessionInfo</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>Session Info</imgui:Text>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="p6:MultiLineInputTextBuilder">
                    <p6:Name>Notes</p6:Name>
                    <p6:Visible>true</p6:Visible>
                    <p6:Text>Notes</p6:Text>
                    <p6:Capacity>16384</p6:Capacity>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="43" Label="Source1" />
                  <Edge From="2" To="45" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="30" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="17" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="12" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="29" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="16" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="29" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="18" To="24" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="23" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="29" Label="Source3" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="28" Label="Source1" />
                  <Edge From="27" To="28" Label="Source2" />
                  <Edge From="28" To="29" Label="Source4" />
                  <Edge From="29" To="42" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="30" To="36" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="35" Label="Source1" />
                  <Edge From="34" To="35" Label="Source2" />
                  <Edge From="35" To="41" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="40" Label="Source1" />
                  <Edge From="39" To="40" Label="Source2" />
                  <Edge From="40" To="41" Label="Source2" />
                  <Edge From="41" To="42" Label="Source2" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="45" To="46" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>