<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:imvizui="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers.Design"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core.Design;assembly=AllenNeuralDynamics.Core.Design"
                 xmlns:imgui="clr-namespace:Bonsai.ImGui;assembly=Bonsai.ImGui"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:imviz="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>18575294</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>RawFeed</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>Camera1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawFeed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.005S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToDouble(it * 0.005)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Camera1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>Camera2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawFeed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.005S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToDouble(it * 0.005)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Camera2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>TriggeredCamerasStream</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="imvizui:ImGuiVisualizerBuilder">
        <imvizui:Name />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Frame</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggeredCamerasStream</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraPreviewVisualizer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>CreateVisualizer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:AccumulateToImmutableList" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>ToArray</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>List</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>List</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:ToArray" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>CameraList</Name>
                  </Expression>
                  <Expression xsi:type="imvizui:ImGuiVisualizerBuilder" />
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraList</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Items" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="imgui:ComboBuilder">
                    <imgui:Name>SelectCameraStream</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Items>
                      <imgui:string>Camera1</imgui:string>
                      <imgui:string>Camera2</imgui:string>
                    </imgui:Items>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>SelectedControllerCamera</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SelectedControllerCamera</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraList</Name>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>GetStream</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Camera</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggeredCamerasStream</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Camera</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" />
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="StringProperty">
                                  <Value>Camera1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>CurrentStream</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentStream</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Image</Selector>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
                    <rx:Name>FlipState</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Flipped</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="LessThan">
                          <Operand xsi:type="IntProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Mode" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Flip">
                      <cv:Mode>Vertical</cv:Mode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>NotFlipped</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="LessThan">
                          <Operand xsi:type="IntProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new (
 it.Size.Width / 2 as X,
 it.Size.Height / 2 as Y
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="X" />
                      <Property Name="Y" Selector="Y" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CreatePoint2f">
                      <cv:X>360</cv:X>
                      <cv:Y>270</cv:Y>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Pivot" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
                    <rx:Name>Rotation</rx:Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Rotation" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:AffineTransform">
                      <cv:Pivot>
                        <cv:X>360</cv:X>
                        <cv:Y>270</cv:Y>
                      </cv:Pivot>
                      <cv:Translation>
                        <cv:X>0</cv:X>
                        <cv:Y>0</cv:Y>
                      </cv:Translation>
                      <cv:Rotation>-1.57079637</cv:Rotation>
                      <cv:Scale>
                        <cv:X>1</cv:X>
                        <cv:Y>1</cv:Y>
                      </cv:Scale>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Transform" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:WarpAffine">
                      <cv:Transform>-4.371139E-08,-1,630;1,-4.371139E-08,-90</cv:Transform>
                      <cv:Flags>Linear</cv:Flags>
                      <cv:FillValue>
                        <cv:Val0>0</cv:Val0>
                        <cv:Val1>0</cv:Val1>
                        <cv:Val2>0</cv:Val2>
                        <cv:Val3>0</cv:Val3>
                      </cv:FillValue>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="imviz:SampleOnNewFrame">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="imviz:StoreImage">
                      <imviz:InternalFormat>Rgba</imviz:InternalFormat>
                      <imviz:WrapS>Repeat</imviz:WrapS>
                      <imviz:WrapT>Repeat</imviz:WrapT>
                      <imviz:MinFilter>Linear</imviz:MinFilter>
                      <imviz:MagFilter>Linear</imviz:MagFilter>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Image" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="imgui:ImageBuilder">
                    <imgui:Name>PreviewImage</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:ImageSize>
                      <imgui:X>640</imgui:X>
                      <imgui:Y>640</imgui:Y>
                    </imgui:ImageSize>
                    <imgui:UV0>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:UV0>
                    <imgui:UV1>
                      <imgui:X>1</imgui:X>
                      <imgui:Y>1</imgui:Y>
                    </imgui:UV1>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>2</imgui:Columns>
                    <imgui:Flags>None</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:CheckboxBuilder">
                    <imgui:Name>FlipHorizontal</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>Flip Horizontal</imgui:Text>
                    <imgui:Checked>false</imgui:Checked>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:CheckboxBuilder">
                    <imgui:Name>FlipVertical</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>Flip Vertical</imgui:Text>
                    <imgui:Checked>false</imgui:Checked>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Horizontal</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="BitwiseAnd" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Vertical</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="BitwiseAnd" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Both</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseAnd" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>-1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Neither</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="BitwiseAnd" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="5" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>2</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>FlipState</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>2</imgui:Columns>
                    <imgui:Flags>None</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:ButtonBuilder">
                    <imgui:Name>RotateCCW</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>&lt;&lt;</imgui:Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>90</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:ButtonBuilder">
                    <imgui:Name>RotateCW</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>&gt;&gt;</imgui:Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>-90</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:DegreeToRadian" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Rotation</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="16" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="20" To="45" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="24" Label="Source1" />
                  <Edge From="22" To="33" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="24" To="30" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="25" To="27" Label="Source1" />
                  <Edge From="26" To="29" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source2" />
                  <Edge From="29" To="32" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source2" />
                  <Edge From="32" To="41" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="39" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source2" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source2" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="44" To="45" Label="Source2" />
                  <Edge From="46" To="47" Label="Source1" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="47" To="50" Label="Source1" />
                  <Edge From="48" To="49" Label="Source1" />
                  <Edge From="49" To="52" Label="Source1" />
                  <Edge From="50" To="51" Label="Source1" />
                  <Edge From="51" To="52" Label="Source2" />
                  <Edge From="52" To="53" Label="Source1" />
                  <Edge From="52" To="55" Label="Source1" />
                  <Edge From="52" To="57" Label="Source1" />
                  <Edge From="52" To="59" Label="Source1" />
                  <Edge From="53" To="54" Label="Source1" />
                  <Edge From="54" To="61" Label="Source1" />
                  <Edge From="55" To="56" Label="Source1" />
                  <Edge From="56" To="61" Label="Source2" />
                  <Edge From="57" To="58" Label="Source1" />
                  <Edge From="58" To="61" Label="Source3" />
                  <Edge From="59" To="60" Label="Source1" />
                  <Edge From="60" To="61" Label="Source4" />
                  <Edge From="61" To="62" Label="Source1" />
                  <Edge From="63" To="64" Label="Source1" />
                  <Edge From="64" To="65" Label="Source1" />
                  <Edge From="64" To="68" Label="Source1" />
                  <Edge From="65" To="66" Label="Source1" />
                  <Edge From="66" To="67" Label="Source1" />
                  <Edge From="67" To="72" Label="Source1" />
                  <Edge From="68" To="69" Label="Source1" />
                  <Edge From="69" To="70" Label="Source1" />
                  <Edge From="70" To="72" Label="Source2" />
                  <Edge From="71" To="72" Label="Source3" />
                  <Edge From="72" To="73" Label="Source1" />
                  <Edge From="73" To="74" Label="Source1" />
                  <Edge From="74" To="75" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>CameraPreviewVisualizer</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="rx:Defer">
                <Name>CreateVisualizer</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Key</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="p1:AccumulateToImmutableList" />
                    </Expression>
                    <Expression xsi:type="rx:SelectMany">
                      <Name>ToArray</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="rx:AsyncSubject">
                            <Name>List</Name>
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>List</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Merge" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:ToArray" />
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:BehaviorSubject">
                      <Name>CameraList</Name>
                    </Expression>
                    <Expression xsi:type="imvizui:ImGuiVisualizerBuilder" />
                    <Expression xsi:type="rx:PublishSubject">
                      <Name>Frame</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Frame</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>CameraList</Name>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Items" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="imgui:ComboBuilder">
                      <imgui:Name>SelectCameraStream</imgui:Name>
                      <imgui:Visible>true</imgui:Visible>
                      <imgui:Items>
                        <imgui:string>Camera1</imgui:string>
                        <imgui:string>Camera2</imgui:string>
                      </imgui:Items>
                    </Expression>
                    <Expression xsi:type="rx:BehaviorSubject">
                      <Name>SelectedControllerCamera</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>SelectedControllerCamera</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>CameraList</Name>
                    </Expression>
                    <Expression xsi:type="Index">
                      <Operand xsi:type="IntProperty">
                        <Value>0</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="rx:CreateObservable">
                      <Name>GetStream</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="rx:AsyncSubject">
                            <Name>Camera</Name>
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>TriggeredCamerasStream</Name>
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>Camera</Name>
                          </Expression>
                          <Expression xsi:type="PropertyMapping">
                            <PropertyMappings>
                              <Property Name="Value" />
                            </PropertyMappings>
                          </Expression>
                          <Expression xsi:type="rx:Condition">
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="MemberSelector">
                                  <Selector>Key</Selector>
                                </Expression>
                                <Expression xsi:type="ExternalizedMapping">
                                  <Property Name="Value" />
                                </Expression>
                                <Expression xsi:type="Equal">
                                  <Operand xsi:type="StringProperty">
                                    <Value>Camera1</Value>
                                  </Operand>
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                                <Edge From="1" To="3" Label="Source1" />
                                <Edge From="2" To="3" Label="Source2" />
                                <Edge From="3" To="4" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Merge" />
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="3" To="6" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source2" />
                          <Edge From="6" To="7" Label="Source1" />
                          <Edge From="7" To="8" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Switch" />
                    </Expression>
                    <Expression xsi:type="rx:PublishSubject">
                      <Name>CurrentStream</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Frame</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>CurrentStream</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Value.Image</Selector>
                    </Expression>
                    <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
                      <rx:Name>FlipState</rx:Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:WithLatestFrom" />
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Name>Flipped</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item2</Selector>
                          </Expression>
                          <Expression xsi:type="LessThan">
                            <Operand xsi:type="IntProperty">
                              <Value>2</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1</Selector>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item2</Selector>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Mode" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="cv:Flip">
                        <cv:Mode>Horizontal</cv:Mode>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Name>NotFlipped</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item2</Selector>
                          </Expression>
                          <Expression xsi:type="LessThan">
                            <Operand xsi:type="IntProperty">
                              <Value>2</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="BitwiseNot" />
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                          <Edge From="3" To="4" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="scr:ExpressionTransform">
                      <scr:Expression>new (
 it.Size.Width / 2 as X,
 it.Size.Height / 2 as Y
)</scr:Expression>
                    </Expression>
                    <Expression xsi:type="InputMapping">
                      <PropertyMappings>
                        <Property Name="X" Selector="X" />
                        <Property Name="Y" Selector="Y" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="cv:CreatePoint2f">
                        <cv:X>360</cv:X>
                        <cv:Y>270</cv:Y>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Pivot" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
                      <rx:Name>Rotation</rx:Name>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Rotation" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="cv:AffineTransform">
                        <cv:Pivot>
                          <cv:X>360</cv:X>
                          <cv:Y>270</cv:Y>
                        </cv:Pivot>
                        <cv:Translation>
                          <cv:X>0</cv:X>
                          <cv:Y>0</cv:Y>
                        </cv:Translation>
                        <cv:Rotation>6.28318548</cv:Rotation>
                        <cv:Scale>
                          <cv:X>1</cv:X>
                          <cv:Y>1</cv:Y>
                        </cv:Scale>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Transform" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="cv:WarpAffine">
                        <cv:Transform>1,1.748456E-07,-6.103516E-05;-1.748456E-07,1,6.103516E-05</cv:Transform>
                        <cv:Flags>Linear</cv:Flags>
                        <cv:FillValue>
                          <cv:Val0>0</cv:Val0>
                          <cv:Val1>0</cv:Val1>
                          <cv:Val2>0</cv:Val2>
                          <cv:Val3>0</cv:Val3>
                        </cv:FillValue>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="imviz:SampleOnNewFrame">
                      <Name>Frame</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="imviz:StoreImage">
                        <imviz:InternalFormat>Rgba</imviz:InternalFormat>
                        <imviz:WrapS>Repeat</imviz:WrapS>
                        <imviz:WrapT>Repeat</imviz:WrapT>
                        <imviz:MinFilter>Linear</imviz:MinFilter>
                        <imviz:MagFilter>Linear</imviz:MagFilter>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Image" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="imgui:ImageBuilder">
                      <imgui:Name>PreviewImage</imgui:Name>
                      <imgui:Visible>true</imgui:Visible>
                      <imgui:ImageSize>
                        <imgui:X>640</imgui:X>
                        <imgui:Y>640</imgui:Y>
                      </imgui:ImageSize>
                      <imgui:UV0>
                        <imgui:X>0</imgui:X>
                        <imgui:Y>0</imgui:Y>
                      </imgui:UV0>
                      <imgui:UV1>
                        <imgui:X>1</imgui:X>
                        <imgui:Y>1</imgui:Y>
                      </imgui:UV1>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Frame</Name>
                    </Expression>
                    <Expression xsi:type="imgui:TableBuilder">
                      <imgui:Visible>true</imgui:Visible>
                      <imgui:Columns>2</imgui:Columns>
                      <imgui:Flags>None</imgui:Flags>
                      <imgui:OuterSize>
                        <imgui:X>0</imgui:X>
                        <imgui:Y>0</imgui:Y>
                      </imgui:OuterSize>
                      <imgui:InnerWidth>0</imgui:InnerWidth>
                    </Expression>
                    <Expression xsi:type="imgui:TableNextColumnBuilder">
                      <imgui:Visible>true</imgui:Visible>
                    </Expression>
                    <Expression xsi:type="imgui:CheckboxBuilder">
                      <imgui:Name>FlipHorizontal</imgui:Name>
                      <imgui:Visible>true</imgui:Visible>
                      <imgui:Text>Flip Horizontal</imgui:Text>
                      <imgui:Checked>false</imgui:Checked>
                    </Expression>
                    <Expression xsi:type="imgui:TableNextColumnBuilder">
                      <imgui:Visible>true</imgui:Visible>
                    </Expression>
                    <Expression xsi:type="imgui:CheckboxBuilder">
                      <imgui:Name>FlipVertical</imgui:Name>
                      <imgui:Visible>true</imgui:Visible>
                      <imgui:Text>Flip Vertical</imgui:Text>
                      <imgui:Checked>false</imgui:Checked>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:CombineLatest" />
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Name>Horizontal</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item1</Selector>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item2</Selector>
                          </Expression>
                          <Expression xsi:type="BitwiseNot" />
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Zip" />
                          </Expression>
                          <Expression xsi:type="BitwiseAnd" />
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="0" To="2" Label="Source1" />
                          <Edge From="1" To="4" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                          <Edge From="3" To="4" Label="Source2" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>1</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Name>Vertical</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item1</Selector>
                          </Expression>
                          <Expression xsi:type="BitwiseNot" />
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item2</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Zip" />
                          </Expression>
                          <Expression xsi:type="BitwiseAnd" />
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="0" To="3" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="4" Label="Source1" />
                          <Edge From="3" To="4" Label="Source2" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Name>Both</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="BitwiseAnd" />
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>-1</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Name>Neither</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item1</Selector>
                          </Expression>
                          <Expression xsi:type="BitwiseNot" />
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item2</Selector>
                          </Expression>
                          <Expression xsi:type="BitwiseNot" />
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Zip" />
                          </Expression>
                          <Expression xsi:type="BitwiseAnd" />
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="0" To="3" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="5" Label="Source1" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="5" Label="Source2" />
                          <Edge From="5" To="6" Label="Source1" />
                          <Edge From="6" To="7" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>2</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>FlipState</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Frame</Name>
                    </Expression>
                    <Expression xsi:type="imgui:TableBuilder">
                      <imgui:Visible>true</imgui:Visible>
                      <imgui:Columns>2</imgui:Columns>
                      <imgui:Flags>None</imgui:Flags>
                      <imgui:OuterSize>
                        <imgui:X>0</imgui:X>
                        <imgui:Y>0</imgui:Y>
                      </imgui:OuterSize>
                      <imgui:InnerWidth>0</imgui:InnerWidth>
                    </Expression>
                    <Expression xsi:type="imgui:TableNextColumnBuilder">
                      <imgui:Visible>true</imgui:Visible>
                    </Expression>
                    <Expression xsi:type="imgui:ButtonBuilder">
                      <imgui:Name>RotateCCW</imgui:Name>
                      <imgui:Visible>true</imgui:Visible>
                      <imgui:Text>&lt;&lt;</imgui:Text>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>90</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="imgui:TableNextColumnBuilder">
                      <imgui:Visible>true</imgui:Visible>
                    </Expression>
                    <Expression xsi:type="imgui:ButtonBuilder">
                      <imgui:Name>RotateCW</imgui:Name>
                      <imgui:Visible>true</imgui:Visible>
                      <imgui:Text>&gt;&gt;</imgui:Text>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>-90</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="rx:Accumulate" />
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="num:DegreeToRadian" />
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>Rotation</Name>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="8" To="11" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                    <Edge From="10" To="11" Label="Source2" />
                    <Edge From="11" To="12" Label="Source1" />
                    <Edge From="13" To="16" Label="Source1" />
                    <Edge From="14" To="15" Label="Source1" />
                    <Edge From="15" To="16" Label="Source2" />
                    <Edge From="16" To="17" Label="Source1" />
                    <Edge From="17" To="18" Label="Source1" />
                    <Edge From="18" To="19" Label="Source1" />
                    <Edge From="20" To="45" Label="Source1" />
                    <Edge From="21" To="22" Label="Source1" />
                    <Edge From="22" To="24" Label="Source1" />
                    <Edge From="22" To="33" Label="Source1" />
                    <Edge From="23" To="24" Label="Source2" />
                    <Edge From="24" To="25" Label="Source1" />
                    <Edge From="24" To="30" Label="Source1" />
                    <Edge From="25" To="26" Label="Source1" />
                    <Edge From="25" To="27" Label="Source1" />
                    <Edge From="26" To="29" Label="Source1" />
                    <Edge From="27" To="28" Label="Source1" />
                    <Edge From="28" To="29" Label="Source2" />
                    <Edge From="29" To="32" Label="Source1" />
                    <Edge From="30" To="31" Label="Source1" />
                    <Edge From="31" To="32" Label="Source2" />
                    <Edge From="32" To="41" Label="Source1" />
                    <Edge From="33" To="34" Label="Source1" />
                    <Edge From="34" To="35" Label="Source1" />
                    <Edge From="35" To="36" Label="Source1" />
                    <Edge From="36" To="39" Label="Source1" />
                    <Edge From="37" To="38" Label="Source1" />
                    <Edge From="38" To="39" Label="Source2" />
                    <Edge From="39" To="40" Label="Source1" />
                    <Edge From="40" To="41" Label="Source2" />
                    <Edge From="41" To="42" Label="Source1" />
                    <Edge From="42" To="43" Label="Source1" />
                    <Edge From="43" To="44" Label="Source1" />
                    <Edge From="44" To="45" Label="Source2" />
                    <Edge From="46" To="47" Label="Source1" />
                    <Edge From="47" To="48" Label="Source1" />
                    <Edge From="47" To="50" Label="Source1" />
                    <Edge From="48" To="49" Label="Source1" />
                    <Edge From="49" To="52" Label="Source1" />
                    <Edge From="50" To="51" Label="Source1" />
                    <Edge From="51" To="52" Label="Source2" />
                    <Edge From="52" To="53" Label="Source1" />
                    <Edge From="52" To="55" Label="Source1" />
                    <Edge From="52" To="57" Label="Source1" />
                    <Edge From="52" To="59" Label="Source1" />
                    <Edge From="53" To="54" Label="Source1" />
                    <Edge From="54" To="61" Label="Source1" />
                    <Edge From="55" To="56" Label="Source1" />
                    <Edge From="56" To="61" Label="Source2" />
                    <Edge From="57" To="58" Label="Source1" />
                    <Edge From="58" To="61" Label="Source3" />
                    <Edge From="59" To="60" Label="Source1" />
                    <Edge From="60" To="61" Label="Source4" />
                    <Edge From="61" To="62" Label="Source1" />
                    <Edge From="63" To="64" Label="Source1" />
                    <Edge From="64" To="65" Label="Source1" />
                    <Edge From="64" To="68" Label="Source1" />
                    <Edge From="65" To="66" Label="Source1" />
                    <Edge From="66" To="67" Label="Source1" />
                    <Edge From="67" To="72" Label="Source1" />
                    <Edge From="68" To="69" Label="Source1" />
                    <Edge From="69" To="70" Label="Source1" />
                    <Edge From="70" To="72" Label="Source2" />
                    <Edge From="71" To="72" Label="Source3" />
                    <Edge From="72" To="73" Label="Source1" />
                    <Edge From="73" To="74" Label="Source1" />
                    <Edge From="74" To="75" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="11" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>