<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:imvizui="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers.Design"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:p1="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="imvizui:ImGuiVisualizerBuilder" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>Frame</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.01S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>0.01</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>TimeBase</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>25224819</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraFeed</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Unit">
        <rx:Name>EndExperiment</rx:Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>Camera1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraFeed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Camera1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>Camera2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraFeed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Camera2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>TriggeredCamerasStream</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraPreviewVisualizer.bonsai">
        <FrameSubject>Frame</FrameSubject>
        <CameraName>Camera1</CameraName>
        <MinSaturation>0.1</MinSaturation>
        <MaxSaturation>0.3</MaxSaturation>
        <FlipState>2</FlipState>
        <Rotation>0</Rotation>
        <TriggeredCamerasStream>TriggeredCamerasStream</TriggeredCamerasStream>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="16" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>