WorkflowBuilder(Version=2.9.0)
GroupWorkflow CameraData
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> PublishSubject CameraFeed
    -> WorkflowOutput

    CreateObservable Camera1
        SubscribeSubject CameraFeed => #0
        SubscribeSubject TimeBase => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> Merge => #4
    StringProperty(Value=Camera1) => #5
    #4, #5 -> WithLatestFrom => #6
    CreateObservable Camera2
        SubscribeSubject CameraFeed => #0
        SubscribeSubject TimeBase => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> Merge => #8
    StringProperty(Value=Camera2) => #9
    #8, #9 -> WithLatestFrom => #10
    #6, #10 -> Merge
    -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
    -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

GroupWorkflow TrialData
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> Unit
    -> IncludeWorkflow TimeBase(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject LickLeft

    BooleanProperty(Value=false)
    -> Take(Count=1)
    -> BehaviorSubject IsRetracted

    SubscribeSubject TimedTrial => #7
    -> MemberSelector(Selector=Value.Trial.IsAutoRewardRight)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #9
    -> Condition => #10
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> BitwiseNot
        -> WorkflowOutput
    #7 -> MemberSelector(Selector=Seconds) => #11
    #10, #11 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject AutoRewardLeft
    #9 -> Condition => #15
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    #15, #11 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject AutoRewardRight

    SubscribeSubject TimedTrial => #19
    -> MemberSelector(Selector=Value.Trial.LickspoutOffsetDelta)
    -> Condition NotZero => #21
        WorkflowInput Source1
        -> Equal(Operand=DoubleProperty(Value=0))
        -> BitwiseNot
        -> WorkflowOutput
    -> Condition MoveRight => #22
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    #19 -> MemberSelector(Selector=Seconds) => #23
    #22, #23 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject LeftBiasCorrection
    #21 -> Condition MoveLeft => #27
        WorkflowInput Source1
        -> LessThan(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    #27, #23 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject RightBiasCorrection

    AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=0)
    -> BehaviorSubject ManipulatorPosition

    DoubleProperty(Value=0)
    -> BehaviorSubject OffsetGain

    Timer(DueTime=PT1S)
    -> SelectMany
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0.79S)
        -> IntProperty(Value=0)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ResponsePeriod)
        -> MulticastSubject SoftwareEvent
        -> WorkflowOutput
    -> SelectMany
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0.306S)
        -> IntProperty(Value=0)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RewardPeriod)
        -> MulticastSubject SoftwareEvent
        -> WorkflowOutput
    -> Delay(DueTime=PT2S)
    -> AindDynamicForagingDataSchema.TrialOutcome(IsRightChoice=nil, IsRewarded=false)
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TrialOutcome)
    -> MulticastSubject SoftwareEvent
    -> SelectMany
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2.147S)
        -> IntProperty(Value=0)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ITI)
        -> MulticastSubject SoftwareEvent
        -> WorkflowOutput
    -> Delay(DueTime=PT0S)
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Break)
    -> MulticastSubject SoftwareEvent
    -> Repeat

    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent => #47
    SubscribeSubject TimeBase => #48
    #47, #48 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
    -> Timestamp
    -> AllenNeuralDynamics.Core.Design.AccumulateToImmutableList
    -> BehaviorSubject SoftwareEventHistory

    Timer(DueTime=PT5S)
    -> StringProperty(Value=Expo)
    -> Take(Count=1)
    -> ToList
    -> InputMapping(Experimenter(Selector=it))
    -> AindDynamicForagingDataSchema.Session
      AindBehaviorServicesPkgVersion=0.13.5
      Version=0.13.5
      Experiment=Task6
      Date=0001-01-01T00:00:00.0000000+00:00
      SessionName=Stage1
      Subject=Plimbo
      AllowDirtyRepo=false
      SkipHardwareValidation=false
    -> Repeat => #61
    Bonsai.Windows.Input.KeyDown(Filter=M, SuppressRepetitions=false)
    -> StringProperty(Value=Expo)
    -> Take(Count=1)
    -> ToList
    -> InputMapping(Experimenter(Selector=it))
    -> AindDynamicForagingDataSchema.Session
      AindBehaviorServicesPkgVersion=0.13.5
      Version=0.13.5
      Experiment=Task7
      Date=0001-01-01T00:00:00.0000000+00:00
      SessionName=Stage2
      Subject=Plimbo
      AllowDirtyRepo=false
      SkipHardwareValidation=false
    -> Repeat => #68
    #61, #68 -> Merge
    -> BehaviorSubject SessionInfo

    StringProperty(Value=TimeElapsed) => #71
    Timer(DueTime=PT0S, Period=PT1S)
    -> FloatProperty(Value=1)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #75
      Expression: Convert.ToString(it)
    #71, #75 -> CombineLatest => #76
    StringProperty(Value=CurrentTrial) => #77
    SubscribeSubject TimedTrial
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #81
      Expression: Convert.ToString(it)
    #77, #81 -> CombineLatest => #82
    #76, #82 -> CombineLatest
    -> SelectMany
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        #1, #2 -> Merge
        -> Take(Count=2)
        -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput
    -> AsObject
    -> BehaviorSubject SessionMetadata

    SubscribeSubject TimedTrial => #87
    SubscribeSubject BiasRandom => #88
    #87, #88 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Numerics.Distributions.Sample
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it > 1 ? 1 : it
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it < -1 ? -1 : it
    -> ElementIndex
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        it.Value as Bias,
        it.Index as TrialIndex
        )
    -> PublishSubject TrialIndexedBias

    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> Unit
    -> IncludeWorkflow TimeBase(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject LickRight

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0.1, Upper=1)
    -> BehaviorSubject Random

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-0.1, Upper=0.1)
    -> BehaviorSubject BiasRandom

    Timer(DueTime=PT0S, Period=PT0.01S)
    -> DoubleProperty(Value=0.01)
    -> Accumulate
    -> PublishSubject TimeBase

    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.5)) => #114
    Range(Start=0, Count=500)
    -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
    -> Add(Operand=DoubleProperty(Value=3.14))
    -> Bonsai.Numerics.Sin
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #119
      Expression: (it +1) * 0.5
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.5))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it
    -> InputMapping(Value(Selector=it))
    -> CreateNullableBoolean(Value=true) => #125
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.9)) => #128
    -> CreateNullableBoolean(Value=nil) => #129
    #125, #129, #128 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #131
      Expression: Item3 ?  Item2 : Item1
    Range(Start=0, Count=500)
    -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
    -> Bonsai.Numerics.Sin
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #135
      Expression: (it +1) * 0.5
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.5)) => #138
    #114, #119, #131, #135, #138 -> Zip => #139
    -> InputMapping(IsRightChoice(Selector=Item3), IsRewarded(Selector=Item5)) => #140
    #139 -> InputMapping(PRewardLeft(Selector=Item2), PRewardRight(Selector=Item4)) => #141
    AindDynamicForagingDataSchema.Metadata(PRewardLeft=0.5, PRewardRight=0.5)
    -> PropertyMapping(Metadata) => #143
    #141, #143 -> AindDynamicForagingDataSchema.Trial
      PRewardLeft=0.59164587077011477
      PRewardRight=0.40913708100521279
      RewardConsumptionDuration=5
      RewardDelayDuration=0
      ResponseDeadlineDuration=5
      QuiescencePeriodDuration=0.5
      InterTrialIntervalDuration=5
      IsAutoRewardRight=nil
      LickspoutOffsetDelta=0
    -> PropertyMapping(Trial) => #145
    #140, #145 -> AindDynamicForagingDataSchema.TrialOutcome(IsRightChoice=true, IsRewarded=false)
    -> CreateObservable SampleTrial
        WorkflowInput Source1 => #0
        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #4
        #0, #4 -> Delay(DueTime=PT0.907S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Concat => #148
    SubscribeSubject TimeBase => #149
    #148, #149 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> BehaviorSubject TimedTrial
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.5))
    -> InputMapping(Value(Selector=it))
    -> CreateNullableBoolean(Value=true) => #157
    -> CreateNullableBoolean(Value=nil) => #158
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.05)) => #161
    #158, #157, #161 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #163
      Expression: Item3 ? Item1 : Item2
    #139, #163 -> Zip
    -> MemberSelector(Selector=Item2)

GroupWorkflow Visualizer
    Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder => #0
    -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
    -> PublishSubject Frame
    #0 -> Bonsai.Design.VisualizerWindow(Visible=true, Location=nil, Size=nil, WindowState=nil)

    GroupWorkflow VisualizerStructure
        ExternalizedMapping(Name(DisplayName=FrameSubject))
        -> SubscribeSubject Frame => #1
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> TableBuilder => #3
          Visible=true
          Columns(ColumnStyling(Name=Ethograph, Flags=WidthStretch, InitValue=0), ColumnStyling(Name=Camera, Flags=WidthFixed, InitValue=320))
          Flags="BordersInnerH BordersOuterH BordersInnerV BordersOuterV BordersH BordersV BordersInner BordersOuter Borders SizingFixedFit"
          OuterSize(X=0, Y=0)
          InnerWidth=0
          ShowHeadersRow=true
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #5
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Behavior => #7
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Bias => #9
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Ethogram => #11
        #7, #9, #11 -> Zip => #12
        #3 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Camera => #14
        #12, #14 -> Zip
        #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=Borders, OuterSize(X=0, Y=0), InnerWidth=0)
        -> PublishSubject Metadata => #18
        #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TabBarBuilder(Visible=true, Flags=None) => #20
        -> Bonsai.ImGui.TabItemBuilder PreSession(Visible=true, Text=pre-session, Flags=None)
        -> PublishSubject PreSession => #22
        #20 -> Bonsai.ImGui.TabItemBuilder IntraSession(Visible=true, Text=intra-session, Flags=None)
        -> PublishSubject IntraSession => #24
        #18, #22, #24 -> Zip

    IncludeWorkflow
      Path=Extensions\BehaviorVisualizer.bonsai
      PlotName=Behavior1
      LickLeftSubject=LickLeft
      LickRightSubject=LickRight
      TrialSubject=TimedTrial
      FrameSubject=Behavior
      AutoRewardRightSubject=AutoRewardRight
      AutoRewardLeftSubject=AutoRewardLeft

    GroupWorkflow BiasVisualizer
        ExternalizedMapping(FrameSubject, TimedBias, LeftBiasCorrectionSubject, RightBiasCorrectionSubject)
        -> Defer BiasVisualizer
            ExternalizedMapping(Name(DisplayName=FrameSubject))
            -> SubscribeSubject Bias
            -> Bonsai.ImPlot.PlotBuilder BiasPlot(Visible=true, Size(X=-1, Y=150), Flags=NoTitle, FlagsX=AutoFit, FlagsY=None)
            -> PublishSubject BiasPlot

            Unit
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame BiasPlot
            -> PlotStyling(TickPositions(double=-1, double=1), TickLabels(string=R, string=L), ImPlotLocationFlags=East, ImPlotLegendFlags=Outside, YAxisMax=1.1, YAxisMin=-1.1)

            ExternalizedMapping(Name(DisplayName=LeftBiasCorrectionSubject))
            -> SubscribeSubject LeftBiasCorrection
            -> DoubleProperty(Value=0.5) => #9
            SubscribeSubject TrialIndexedBias
            -> MemberSelector(Selector=TrialIndex)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #12
            #9, #12 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new (it.Item1 as StageCorrection, it.Item2 as TrialIndex)
            -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1000, IndexSelector=TrialIndex, ValueSelector=StageCorrection)
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame BiasPlot
            -> ScatterStyling
              ImPlotMarker=Up
              Size=3
              FillColorR=1
              FillColorG=0
              FillColorB=0
              FillColorA=1
              OutlineColorR=0
              OutlineColorG=0
              OutlineColorB=0
              OutlineColorA=1
              OutlineWeight=1
            -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)

            ExternalizedMapping(Name(DisplayName=RightBiasCorrectionSubject))
            -> SubscribeSubject RightBiasCorrection
            -> DoubleProperty(Value=-0.5) => #21
            SubscribeSubject TrialIndexedBias
            -> MemberSelector(Selector=TrialIndex)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #24
            #21, #24 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new (it.Item1 as StageCorrection, it.Item2 as TrialIndex)
            -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1000, IndexSelector=TrialIndex, ValueSelector=StageCorrection)
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame BiasPlot
            -> ScatterStyling
              ImPlotMarker=Down
              Size=3
              FillColorR=0
              FillColorG=0
              FillColorB=1
              FillColorA=1
              OutlineColorR=0
              OutlineColorG=0
              OutlineColorB=1
              OutlineColorA=1
              OutlineWeight=1
            -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)

            ExternalizedMapping(Name(DisplayName=TimedBias))
            -> SubscribeSubject TrialIndexedBias => #32
            -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1000, IndexSelector=TrialIndex, ValueSelector=Bias)
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame BiasPlot
            -> LineStyling(ColorR=0, ColorG=0, ColorB=0, ColorA=1, LineThickness=2)
            -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
            #32 -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1, IndexSelector=TrialIndex, ValueSelector=Bias)
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame BiasPlot
            -> ScatterStyling
              ImPlotMarker=Circle
              Size=5
              FillColorR=0
              FillColorG=1
              FillColorB=0
              FillColorA=1
              OutlineColorR=0
              OutlineColorG=0
              OutlineColorB=0
              OutlineColorA=1
              OutlineWeight=1
            -> Bonsai.ImPlot.PlotScatter(Visible=true, Flags=None)
            #32 -> MemberSelector(Selector=Bias)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #42
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame BiasPlot => #43
            #42 -> Format(Format={0:N2}, Selector=it)
            -> PropertyMapping(Text) => #45
            #32 -> MemberSelector(Selector=TrialIndex)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #47
            -> PropertyMapping(X) => #48
            #42 -> PropertyMapping(Y) => #49
            #43, #45, #48, #49 -> Bonsai.ImPlot.PlotText(Visible=true, Text=-0.33, X=32, Y=-0.32753804625363003, PixelOffset(X=0, Y=-10), Flags=None)
            #32 -> DoubleProperty(Value=0.5) => #51
            #51, #47 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new (it.Item1 as LeftBias, it.Item2 as TrialIndex)
            -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1000, IndexSelector=TrialIndex, ValueSelector=LeftBias)
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame BiasPlot
            -> LineStyling(ColorR=1, ColorG=0, ColorB=0, ColorA=0.7, LineThickness=1)
            -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
            #32 -> DoubleProperty(Value=-0.5) => #58
            #58, #47 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new (it.Item1 as RightBias, it.Item2 as TrialIndex)
            -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1000, IndexSelector=TrialIndex, ValueSelector=RightBias)
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame BiasPlot
            -> LineStyling(ColorR=0, ColorG=0, ColorB=1, ColorA=0.7, LineThickness=1)
            -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
        -> WorkflowOutput

    GroupWorkflow OutputControl
        PublishSubject<System.Single> UiHabituationTimeUpdate
        PublishSubject<System.Reactive.Unit> UiMoveLeft
        PublishSubject<System.Reactive.Unit> UiGiveRight
        PublishSubject<System.Reactive.Unit> UiGiveLeft
        PublishSubject<System.Reactive.Unit> UiMoveRight
        PublishSubject<System.Reactive.Unit> UiManipulatorLeft
        PublishSubject<System.Reactive.Unit> UiManipulatorForwardLeft
        PublishSubject<System.Reactive.Unit> UiManipulatorForwardRight
        PublishSubject<System.Reactive.Unit> UiManipulatorUp
        PublishSubject<System.Boolean> UiDrainLeft
        PublishSubject<System.Boolean> UiDrainBoth
        PublishSubject<System.Boolean> UiDrainRight
        PublishSubject<System.Reactive.Unit> UiManipulatorRight
        PublishSubject<System.Reactive.Unit> UiManipulatorBackRight
        PublishSubject<System.Reactive.Unit> UiManipulatorBackLeft
        PublishSubject<System.Reactive.Unit> UiManipulatorDown
        PublishSubject<System.Reactive.Unit> UiManipulatorStop
        PublishSubject<System.Reactive.Unit> UiManipulatorHome
        PublishSubject<System.Reactive.Unit> UiManipulatorInitialize

        BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut
        -> BehaviorSubject StartExperiment

        BehaviorSubject<System.Reactive.Unit> EndExperiment
        PublishSubject<System.Reactive.Unit> UiCueGiveRight
        PublishSubject<System.Reactive.Unit> UiCueGiveLeft
        PublishSubject<System.Boolean> UiKeepLeftOpen
        PublishSubject<System.Boolean> UiKeepRightOpen
        PublishSubject<System.Boolean> UiKeepBothOpen
        PublishSubject<System.Boolean> DrainLeftComplete
        PublishSubject<System.Boolean> DrainRightComplete

    SubscribeSubject Ethogram => #8
    SubscribeSubject SoftwareEventHistory
    -> PropertyMapping(SoftwareEvents) => #10
    #8, #10 -> SoftwareEventVisualizer
      Visible=true
      SoftwareEvents
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
        TimestampedOfSoftwareEvent=""
      TrialBreakEventName=Break
      PlotHeight=200
      ShadedAreaPlotters
        ShadedAreaPlotter(EventName=TrialOutcome, Color=CornflowerBlue, Alpha=0.3)
        ShadedAreaPlotter(EventName=RewardPeriod, Color=Crimson, Alpha=0.3)
        ShadedAreaPlotter(EventName=ITI, Color=Cyan, Alpha=0.3)
      PointPlotters
        PointPlotter(EventName=TrialOutcome, Color=SaddleBrown, YPosition=0.5, MarkerSize=2, Marker=Circle)
        PointPlotter(EventName=LickLeft, Color=Red, YPosition=0.8, MarkerSize=2, Marker=Down)
        PointPlotter(EventName=LickRight, Color=DodgerBlue, YPosition=0.2, MarkerSize=2, Marker=Up)

    Unit => #12
    -> GroupWorkflow CameraPreviewVisualizer
        WorkflowInput Source1 => #0
        ExternalizedMapping(FrameSubject, CameraName, MinSaturation, MaxSaturation, Rotation, TriggeredCamerasStream, FlipHorizontal, FlipVertical) => #1
        #0, #1 -> CreateObservable CameraPreview
            ExternalizedMapping(Name(DisplayName=FrameSubject))
            -> SubscribeSubject Camera
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
            -> PublishSubject Table

            ExternalizedMapping(Name(DisplayName=TriggeredCamerasStream))
            -> SubscribeSubject TriggeredCamerasStream => #5
            ExternalizedMapping(Value(DisplayName=CameraName)) => #6
            #5, #6 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty(Value=Camera1))
                -> WorkflowOutput
            -> Merge
            -> PublishSubject CameraStream

            SubscribeSubject Table
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #11
            SubscribeSubject CameraStream => #12
            SubscribeSubject EndExperiment => #13
            #12, #13 -> TakeUntil
            -> MemberSelector(Selector=Value)
            -> Bonsai.ImGui.Visualizers.SampleOnNewFrame Table
            -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #17
            SubscribeSubject OverlayAlpha
            -> PropertyMapping(Alpha) => #19
            ExternalizedMapping(MinSaturation, MaxSaturation, Rotation, FlipHorizontal, FlipVertical) => #20
            #17, #19, #20 -> SaturationShaderPass(Alpha=0.5, MinSaturation=0.1, MaxSaturation=0.3, Rotation=0.1, FlipHorizontal=false, FlipVertical=false)
            -> PropertyMapping(Image) => #22
            #11, #22 -> Bonsai.ImGui.ImageBuilder PreviewImage(Visible=true, ImageSize(X=320, Y=320), UV0(X=0, Y=0), UV1(X=1, Y=1)) => #23
            SubscribeSubject Table
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #28
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TextBuilder(Visible=true, Text=Alpha) => #30
            #28 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.SliderFloatBuilder(Visible=true, Min=0, Max=1, Flags=None, InitialValue=0.5)
            -> BehaviorSubject OverlayAlpha => #33
            #30, #33 -> Zip => #34
            #23, #34 -> Zip
        -> Switch
    #12 -> GroupWorkflow CameraPreviewVisualizer
        WorkflowInput Source1 => #0
        ExternalizedMapping(FrameSubject, CameraName, MinSaturation, MaxSaturation, FlipState, Rotation, TriggeredCamerasStream) => #1
        #0, #1 -> CreateObservable CameraPreview
            ExternalizedMapping(Name(DisplayName=FrameSubject))
            -> SubscribeSubject Camera
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
            -> PublishSubject Table

            ExternalizedMapping(Name(DisplayName=TriggeredCamerasStream))
            -> SubscribeSubject TriggeredCamerasStream => #5
            ExternalizedMapping(Value(DisplayName=CameraName)) => #6
            #5, #6 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty(Value=Camera2))
                -> WorkflowOutput
            -> Merge
            -> PublishSubject CameraStream

            SubscribeSubject Table
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #11
            SubscribeSubject CameraStream => #12
            SubscribeSubject EndExperiment => #13
            #12, #13 -> TakeUntil
            -> MemberSelector(Selector=Value) => #15
            ExternalizedMapping(Value(DisplayName=FlipState))
            -> IntProperty(Value=2) => #17
            #15, #17 -> WithLatestFrom => #18
            -> Condition Flipped => #19
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> LessThan(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #20
            #19 -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Mode) => #22
            #20, #22 -> Bonsai.Vision.Flip(Mode=Vertical) => #23
            #18 -> Condition NotFlipped
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> LessThan(Operand=IntProperty(Value=2))
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #25
            #23, #25 -> Merge => #26
            #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new (
                 it.Size.Width / 2 as X,
                 it.Size.Height / 2 as Y
                )
            -> InputMapping(X(Selector=X), Y(Selector=Y))
            -> Bonsai.Vision.CreatePoint2f(X=320, Y=240)
            -> PropertyMapping(Pivot)
            -> Bonsai.Vision.AffineTransform(Pivot(X=320, Y=240), Translation(X=0, Y=0), Rotation=0, Scale(X=1, Y=1))
            -> PropertyMapping(Transform) => #32
            #26, #32 -> Bonsai.Vision.WarpAffine(Transform="1,0,0;0,1,0", Flags=Linear, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
            -> Bonsai.ImGui.Visualizers.SampleOnNewFrame Table
            -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #35
            SubscribeSubject OverlayAlpha
            -> PropertyMapping(Alpha) => #37
            ExternalizedMapping(MinSaturation, MaxSaturation, Rotation) => #38
            #35, #37, #38 -> SaturationShaderPass(Alpha=0.5, MinSaturation=0.1, MaxSaturation=0.3, Rotation=0, FlipHorizontal=false, FlipVertical=false)
            -> PropertyMapping(Image) => #40
            #11, #40 -> Bonsai.ImGui.ImageBuilder PreviewImage(Visible=true, ImageSize(X=320, Y=320), UV0(X=0, Y=0), UV1(X=1, Y=1)) => #41
            SubscribeSubject Table
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #46
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TextBuilder(Visible=true, Text=Alpha) => #48
            #46 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.SliderFloatBuilder(Visible=true, Min=0, Max=1, Flags=None, InitialValue=0.5)
            -> BehaviorSubject OverlayAlpha => #51
            #48, #51 -> Zip => #52
            #41, #52 -> Zip
        -> Switch

    SubscribeSubject SessionInfo => #15
    AindDynamicForagingDataSchema.AindDynamicForagingTaskLogic(Name=AindDynamicForaging, Version=0.0.2-rc37, StageName=Task6) => #16
    #15, #16 -> WithLatestFrom
    -> IncludeWorkflow
      Path=Extensions\MetadataVisualizer.bonsai
      FrameSubject=Metadata
      StartExperimentSubject=StartExperimentShortcut
      UiHabituationTimeUpdate=UiHabituationTimeUpdate

    IncludeWorkflow
      Path=Extensions\PreSessionVisualizer.bonsai
      FrameSubject=PreSession
      UiKeepLeftOpne=UiKeepLeftOpen
      UiKeepRightOpen=UiKeepRightOpen
      UiKeepBothOpen=UiKeepBothOpen
      UiDrainLeft=UiDrainLeft
      UiDrainRight=UiDrainRight
      UiDrainBoth=UiDrainBoth
      UiManipulatorLeft=UiManipulatorLeft
      UiManipulatorForwardLeft=UiManipulatorForwardLeft
      UiManipulatorForwardRight=UiManipulatorForwardRight
      UiManipulatorUp=UiManipulatorUp
      UiManipulatorRight=UiManipulatorRight
      UiManipulatorBackLeft=UiManipulatorBackLeft
      UiManipulatorBackRight=UiManipulatorBackRight
      UiManipulatorDown=UiManipulatorDown
      UiManipulatorStop=UiManipulatorStop
      UiManipulatorHome=UiManipulatorHome
      UiControlManipulator=UiManipulatorInitialize
      DrainLeftComplete=DrainLeftComplete
      DrainRightComplete=DrainRightComplete

    IncludeWorkflow
      Path=Extensions\IntraSessionVisualizer.bonsai
      FrameSubject=IntraSession
      UiGiveLeft=UiGiveLeft
      UiGiveRight=UiGiveRight
      UiMoveLeft=UiMoveLeft
      UiMoveRight=UiMoveRight
      StartExperimentSubject=StartExperiment
      UiCueGiveLeft=UiCueGiveLeft
      UiCueGiveRight=UiCueGiveRight
      SessionMetadataSubject=SessionMetadata
